PsychoPy2experiment version="2023.2.3"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Embody_only_20240120_psychopy202225
  keyboardBackend = ioHub
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Routines
  Routine embody_q_postexp
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    ImageComponent body_image_3
      image = base.png
      size = (1,1)
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = JS
      Begin JS Experiment:
        i=0;
        mousenum = 0;
        npoints = 200;
        csize = 50/60;
        cx = [];
        for (i=0;i<npoints;i++) {
            cx.push(new visual.Polygon ({
            win: psychoJS.window, name: 'c0',
            edges: 50, size:[0.5, 0.5],
            ori: 0, pos: [0, 0],
            lineWidth: 0, lineColor: new util.Color([1, 1, 1]),
            fillColor: new util.Color([1, -1, -1]),
            opacity: 0.5, depth: 0, interpolate: true,
            }));
            }
      Begin JS Routine:
        mousenum = 0;
      End JS Routine:
        for (i=0;i<npoints;i++) {
            cx[i].setAutoDraw(false);
            }
    MouseComponent mouse_body_3
      clickable = reset_rect_3
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_body_3
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent lt_text_body_3
      color = black
      letterHeight = 0.025
      pos = (-0.33, -0.45)
      startVal [time (s)] = 0.0
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      text:
        for this body, color the regions
        whose activity you feel
        increasing or getting stronger
    TextComponent rt_text_body_3
      color = black
      letterHeight = 0.025
      pos = (+0.33, -0.45)
      startVal [time (s)] = 0.0
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      text:
        for this body, color the regions
        whose activity you feel
        decreasing or getting weaker
    TextComponent body_explanation_3
      color = black
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Use the pictures to
        indicate the bodily sensations
        you experience when you feel:
    TextComponent body_progress_3
      color = black
      letterHeight = 0.02
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = Press 'Enter' to go to the next page
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    PolygonComponent reset_rect_3
      fillColor = $[1,1,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      pos = (0, -0.4)
      shape = rectangle
      size = (0.1, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent reset_text_3
      color = black
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = RESET
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    TextComponent feeling_words
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $feel_word
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    CodeComponent main_code
      Code Type = Both
      Before JS Experiment:
        import './keyboard.min.js';
        //// Define Necessary Functions
        //
        function numsvec(veclen,n) {
        var arr=Array.apply(null, new Array(veclen)).map(Number.prototype.valueOf,n);
        return arr;
        }

        //
        function vec_multiply(v1,v2) {
        var arr = [];
        for (var i=0;i<v1.length;i++) {
        arr.push(v1[i]*v2[i]);
        }
        return arr;
        }

        //
        function multifunc(func, input) {
        var arr = [];
        for (var i=0;i<input.length;i++) {
        arr.push(func(input[i]));
        }
        return arr;
        }

        //
        function shuffle(array) {
        var currentIndex = array.length, temporaryValue, randomIndex;

        // While there remain elements to shuffle...
        while (0 !== currentIndex) {

          // Pick a remaining element...
          randomIndex = Math.floor(Math.random() * currentIndex);
          currentIndex -= 1;

          // And swap it with the current element.
          temporaryValue = array[currentIndex];
          array[currentIndex] = array[randomIndex];
          array[randomIndex] = temporaryValue;
        }

        return array;
        }

        //
        function linspace(startp,endp,numpoint) {
        var linarr=Array.apply(null, new Array(numpoint)).map(Number.prototype.valueOf,0);
        var step = (endp-startp)/(numpoint-1);
        for(var i = 0; i < numpoint; i++){
        linarr[i]=startp + i*step;
        }
        return linarr
        }

        function range(n) {
        var ranarr = linspace(0,n-1,n);
        return ranarr;
        }

        //
        function findallind(array,element) {
        var indices = [];
        var idx = array.indexOf(element);
        while (idx != -1) {
        indices.push(idx);
        idx = array.indexOf(element, idx + 1);
        }
        return indices
        }

        function sumArrayElements(array1,array2){
        var sumarr = [];
        for (var i=0;i<array1.length;i++) {
          sumarr.push(array1[i]+array2[i]);
          }
          return sumarr;
        }

        //
        function ReplaceArrayElements(array,index,replacevalue) {
        if (replacevalue.length>1) {
        for (var i=0;i<index.length;i++) {
        array[index[i]]=replacevalue[i];
        }
        } else {
        for (var i=0;i<index.length;i++) {
        array[index[i]]=replacevalue;
        }
        }
        return array;
        }

        //
        function randunif(min,max,N) {
          var randarr = [];
          for (var i=0;i<N;i++) {
              randarr.push(min+(max-min)*Math.random());
          }
        return randarr;
        }
      Begin Experiment:
        import numpy as np

        unit = 1/16
        tlen = 5
        p1coord = [np.random.randint(0,16), np.random.randint(0,16)]
        threatcoord = [np.random.randint(0,16), np.random.randint(0,16)]

        p1pos = np.array(p1coord)*unit-0.5+unit/2
        threatpos = np.array(threatcoord)*unit-0.5+unit/2

        predspd = 1/20
        iscage=0

        ## within cage
        nstep = int(1/predspd)
        predcwsx = np.concatenate((np.linspace(0,1,nstep),np.ones(nstep),np.linspace(1,predspd,nstep),np.zeros(nstep)))+7
        predcwsy = np.concatenate((np.ones(nstep),np.linspace(1,predspd,nstep),np.zeros(nstep),np.linspace(0,1,nstep)))+7
        predccwsx = predcwsx[::-1]
        predccwsy = predcwsy[::-1]
        currentdir = 1
        predstart = np.random.randint(0,len(predcwsx))
        predcoord = [predcwsx[predstart],predcwsy[predstart]]
        ## out of cage
        Nframe = 0
        npos = 0

        predpos = np.array(predcoord)*unit-0.5+unit/2
      Begin JS Experiment:
        tlen = 16;
        outlen = 0;
        Ntrial = 180;
        unit = 1/16;
        spawnnum=0;

        // Condition list
        condition_thisexp = [0,1,0,1,0,3,0,1,0,3,0,1,0,1,3,0,1,0,2,0,1,0,1,0,3,0,1,0,2,0,1,0,1,0,1,3,0,1,2,0,1,2,0,3,0,1,0,1,2,0,1,0,2,0,1,0,2,0,1,0,3,0,1,0,1,0,1,2,0,1,0,3,0,1,0,1,0,2,0,1,3,0,1,0,1,3,0,1,0,1,0,1,2,0,1,0,3,0,1,0,1,3,0,1,0,1,3,0,1,0,3,0,1,0,1,0,1,3,0,1,0,1,3,0,1,0,1,0,2,0,1,0,1,2,0,1,0,1,2,0,1,3,0,1,0,2,0,1,0,1,2,0,1,0,3,0,1,0,1,2,0,1,0,2,0,2,0,1,0,1,3,0,2,0,1,0,1,2,0,3];
        tlen_seq=[3,3,1,16,16,16,1,9,16,16,1,5,3,16,16,1,9,16,16,5,1,3,7,7,16,7,5,9,16,9,7,3,9,7,16,16,9,16,16,16,1,16,16,16,1,5,3,16,16,5,16,3,16,16,1,16,16,9,3,16,16,5,1,1,16,16,7,16,16,16,5,16,5,1,3,7,7,16,9,16,16,9,7,7,16,16,9,7,3,9,7,16,16,7,5,9,16,3,9,7,9,16,5,16,9,3,16,16,1,16,16,5,1,1,16,16,7,16,1,5,5,5,16,3,3,1,16,16,16,16,3,7,16,16,1,5,5,5,16,16,1,16,16,16,5,16,3,9,7,9,16,5,16,3,16,5,16,9,3,16,9,3,16,16,16,16,16,3,7,16,16,1,16,9,7,7,16,16,1,16];
        condition=0;
        q_trial = [1,9,38,40,67,74,77,81,85,99,110,118,128,164,166,170];
        attacktimelist = [NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN,12, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN,10, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN,2, NaN, NaN,14, NaN, NaN, NaN, NaN, NaN, NaN,15, NaN, NaN, NaN,10, NaN, NaN, NaN,13, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN,7, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN,8, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN,9, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN,1, NaN, NaN, NaN, NaN,5, NaN, NaN, NaN, NaN,9, NaN, NaN, NaN, NaN, NaN, NaN,11, NaN, NaN, NaN, NaN,7, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN,6, NaN, NaN, NaN,16, NaN,3, NaN, NaN, NaN, NaN, NaN, NaN,4, NaN, NaN, NaN, NaN,8, NaN, NaN];


        playerTILspd0 = 20; //60;
        playerTILspd = playerTILspd0 ;

        // spawning location
        spawn = [[3,3],[3,12],[12,3],[12,12]];
        spawnseq = [2,0,1,0,3,2,0,1,2,1,3,1,0,0,3,2,1,3,2,3,2,0,1,0,3,2,0,1,2,1,3,1,0,0,3,2,1,3,2,3,2];
        playerTILcoord=spawn[spawnseq[0]];
        playerTILpos = [playerTILcoord[0]*unit-0.5+unit/2, playerTILcoord[1]*unit-0.5+unit/2];

        // Threat position
        movpt = [];
        movpt.push([[6,6,14,8,11,14,10,10,1,11,8,2,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0],
        [8,10,14,10,5,14,9,4,15,10,12,14,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13]]);
        movpt.push([[13,6,0,2,1,10,7,14,7,6,0,15,1,11,6,5,5,9,15,0,3,14,1,7,8,8,13,6,2,13,9,6,14,1,12,2,10,9,11,15,0,1,1,7,11,12,10,0,0,11,7,2,4,10,5,0,3,13,1,15,14,4,6,15,12,1,4,1,9,2,9,14,8,11,3,6,8,11,8,2,13,6,0,2,1,10,7,14,7,6,0,15,1,11,6,5,5,9,15,0,3,14,1,7,8,8,13,6,2,13,9,6,14,1,12,2,10,9,11,15,0,1,1,7,11,12,10,0,0,11,7,2,4,10,5,0,3,13,1,15,14,4,6,15,12,1,4,1,9,2,9,14,8,11,3,6,8,11,8,2,13,6,0,2,1,10,7,14,7,6,0,15,1,11,6,5,5,9,15,0,3,14,1,7,8,8,13,6,2,13,9,6,14,1,12,2,10,9,11,15,0,1,1,7,11,12,10,0,0,11,7,2,4,10,5,0,3,13,1,15,14,4,6,15,12,1,4,1,9,2,9,14,8,11,3,6,8,11,8,2],
        [14,10,13,2,2,7,4,1,3,6,0,14,15,10,7,9,6,7,2,0,3,14,15,9,11,6,14,8,15,1,7,8,2,2,12,14,5,9,6,2,1,13,0,4,11,3,9,13,0,10,6,15,11,4,11,15,7,2,1,1,1,5,10,13,8,1,5,2,8,13,8,14,9,5,12,11,12,8,10,1,14,10,13,2,2,7,4,1,3,6,0,14,15,10,7,9,6,7,2,0,3,14,15,9,11,6,14,8,15,1,7,8,2,2,12,14,5,9,6,2,1,13,0,4,11,3,9,13,0,10,6,15,11,4,11,15,7,2,1,1,1,5,10,13,8,1,5,2,8,13,8,14,9,5,12,11,12,8,10,1,14,10,13,2,2,7,4,1,3,6,0,14,15,10,7,9,6,7,2,0,3,14,15,9,11,6,14,8,15,1,7,8,2,2,12,14,5,9,6,2,1,13,0,4,11,3,9,13,0,10,6,15,11,4,11,15,7,2,1,1,1,5,10,13,8,1,5,2,8,13,8,14,9,5,12,11,12,8,10,1]]);
        movpt.push([[14,10,0,7,13,14,9,11,2,1,1,6,13,10,11,4,11,2,15,15,6,7,6,6,1,10,1,13,10,1,5,0,3,1,5,11,9,4,8,8,11,4,7,0,8,6,1,14,12,15,2,3,1,12,15,11,7,14,1,8,8,9,2,0,3,2,0,6,9,15,0,12,13,14,5,2,6,9,0,7],
        [1,9,13,4,1,14,8,11,14,2,2,10,2,4,6,11,10,15,14,2,7,6,8,8,1,5,15,14,7,0,9,0,3,1,11,10,7,5,9,6,5,5,9,15,12,6,13,2,3,1,15,12,15,8,13,8,4,1,2,11,10,9,13,13,7,1,1,11,8,2,0,12,14,14,6,2,10,7,0,3]]);
        movpt.push([[4,4,11,14,2,3,15,2,11,11,15,14,11,6,12,1,8,14,2,8,10,1,6,7,6,3,11,7,14,7,13,1,15,5,2,2,7,8,2,9,9,4,0,6,7,0,1,13,1,10,0,9,5,1,0,0,12,1,6,9,3,10,5,10,15,8,9,13,13,11,1,0,1,14,6,6,0,8,12,15],
        [11,5,8,1,2,12,2,14,11,5,13,2,10,8,8,1,10,14,15,6,4,1,8,4,11,3,6,9,1,6,1,13,14,9,1,15,4,9,13,8,9,5,0,7,3,0,2,14,2,5,13,7,11,0,15,1,12,2,10,7,7,7,6,9,1,12,8,14,2,10,15,13,15,14,10,6,0,11,3,2]]);

        // threatnum per condition
        thn_c0=0;
        thn_c1=0;
        thn_c2=0;
        thn_c3=0;
        thn_c = 0;

        thmov_ind=0;
        threatcoord = [movpt[condition][0][4*thn_c+thmov_ind],movpt[condition][1][4*thn_c+thmov_ind]] //(every update of threat position)
        threatpos = [threatcoord[0]*unit-0.5+unit/2, threatcoord[1]*unit-0.5+unit/2];

        trialpoint = 0;
        trialpoint_t = 0;
        threatsize = [1/16,1/16];
        get_threat = 0;

        // initial predator speed
        predspd_list = [24,23,22,21,20,19,18,17,16,15,14,13,12];
        level = 8;
        predspd = predspd_list[level];
        sr = 0;
        freepred = 0;
        predsize = 1/16;
        iscage=0;

        //// pred init within cage
        predspawn = [[7,7],[7,8],[8,7],[8,8]];
        predspawnseq = [2,3,1,2,2,0,3,2,0,3,3,2,1,1,0,1,0,1,3,0,2,3,1,2,2,0,3,2,0,3,3,2,1,1,0,1,0,1,3,0,2];
        predcoord=predspawn[predspawnseq[0]];
        predpos = [predcoord[0]*unit-0.5+unit/2, predcoord[1]*unit-0.5+unit/2];


        Nframe = 0;
        ud_mov = 0;
        rl_mov = 0;
        temppredcoord = predpos;
        cost0  = 0;
        costxy = 0;
        ucost = 0;
        dcost = 0;
        rcost = 0;
        lcost = 0;
        cost = [0,0,0,0];
        midx = 100;
        hold_flag = 0;
        rorl=0;

        // Define conditions
        condition = 0;
        condition_next = 0;
        tn=0;
        condname="";
        cagecolor = [-1,-1,-1];
        cagethick = 5;
        cagesize = [0,0];
        predsize = [0,0];
        threat_flag=0;
        caught = 0;
        caught_msg = "";
        caught_flag=0;
        threatcolor = [1,1,-1];
        rewardcolor = [0,1,0];
        get_threat = 0;
        next_arrow = "";
        next_con_fig = "";

        stop_t = 0;
        stop_dur = 0;
        stop_flag = 0;
        stopmsg = "";
        stop_lim = 2;
        stopped = 0;

        tlim = 1/70;
        prev_attack_time = 0;
        playerTILx_t=[];
        playerTILy_t=[];
        predx_t=[];
        predy_t=[];
        threatpos_t=[];
        playerTILspd_t = [];
        predspd_t = [];
        trialtime = [];
        trialframe = [];
      Begin Routine:
        Nframe = 0
        npos = 0
        midx = 0
        iscage=0
      Each Frame:
        ## Player movement
        keys = event.getKeys(keyList=['up','down','left','right'])
        if len(keys)>0:
            if keys[-1] == 'up':
                p1coord[1] += 1
            elif keys[-1] == 'down':
                p1coord[1] -= 1
            elif keys[-1] == 'left':
                p1coord[0] -= 1
            elif keys[-1] == 'right':
                p1coord[0] += 1

        p1pos = np.array(p1coord)*unit-0.5+unit/2

        ## Predator movement - Within cage
        if iscage ==1:
            npos = np.remainder(npos, len(predcwsx))
            if np.random.rand() < 0.005:
                currentdir  = abs(1-currentdir)
                npos = len(predcwsx)-npos-1
            if currentdir == 1:
                predcoord = [predcwsx[npos],predcwsy[npos]]
            else:
                predcoord = [predccwsx[npos],predccwsy[npos]]
            npos += 1

        ## Predator movement -  Out of cage
        if iscage ==0:
            temppredcoord = predcoord
            cost0 = np.array(temppredcoord)- np.array(p1coord);
            cost = np.array([sum(np.abs(cost0+np.array([0, predspd]))),sum(np.abs(cost0+np.array([0, -predspd]))),sum(np.abs(cost0+np.array([predspd,0]))),sum(np.abs(cost0+np.array([-predspd,0])))])
            midx = np.argmin(cost)

            if midx==0:
                temppredcoord[1]+=predspd
            elif midx==1:
                temppredcoord[1]-=predspd
            elif midx==2:
                temppredcoord[0]+=predspd
            elif midx==3:
                temppredcoord[0]-=predspd

            while (((temppredcoord[0]-np.floor(temppredcoord[0]))>(predspd-0.00001)) and ((temppredcoord[1]-np.floor(temppredcoord[1]))>(predspd-0.00001))):
                cost[midx] = 100000
                midx = np.argmin(cost)
                temppredcoord = predcoord
                if midx==0:
                    temppredcoord[1]+=predspd
                elif midx==1:
                    temppredcoord[1]-=predspd
                elif midx==2:
                    temppredcoord[0]+=predspd
                elif midx==3:
                        temppredcoord[0]-=predspd
                if sum(cost) == 400000:
                    break

            if sum(cost) == 400000:
                temppredcoord = predcoord
            predcoord = temppredcoord

        predpos = np.array(predcoord)*unit-0.5+unit/2
        Nframe += 1
  Routine Instructions
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    TextComponent Welcome1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Embody Sensation Mapping Task
        Welcome to the Embody sensation mapping task!

        You will participate in an exercise to map your bodily sensations during different scenarios typical within a university setting.

        The task requires you to identify any perceived changes in physical sensation in response to the presented scenario.

        Press space bar to continue.
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space','enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Intro1
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    ImageComponent image
      image = Intro1.png
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Intro2
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    ImageComponent image_2
      image = Intro2.png
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Intro3
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    ImageComponent image_3
      image = Intro3.png
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Intro1
  Routine Intro2
  Routine Intro3
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = feel_word_list.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'feel_word': 'Anger'},
      {'feel_word': 'Anxiety'},
      {'feel_word': 'Fear'},
      {'feel_word': 'Happiness'},
      {'feel_word': 'Depression'},
      {'feel_word': 'Safe'},
      {'feel_word': 'Sadness'},
      {'feel_word': 'Panic'},
      {'feel_word': 'Surprise'},
      {'feel_word': 'Shame'},
      {'feel_word': 'Neutral'}]
    Routine embody_q_postexp
  LoopTerminator trials
