PsychoPy2experiment version="2020.2.10"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=78764C9A
  Experiment info = {'Prolific_ID': '', '': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[0.2,0.2,0.2]
  expName = TIL_V2_20210224
  logging level = debug
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Routines
  Routine trial
    CodeComponent cage_code
      Code Type = JS
      Begin JS Routine:
        predator_embody.setSize(0);
        predator.setSize(0);
        predator_Q.setSize(0);

        if (condition==0) {
            condname = "safe";
            iscage = 1;
            cagecolor = [-1,-1,-1];
            cagethick = 10;
            cagesize = [2/16, 2/16];
            predsize = 0;
            //predcoord = [100,100];
            thn_c = thn_c0;
            thn_c0 += 1;
            threatsize = [1/16,1/16];
            } else if (condition==1) {
            condname = "pre_encounter";
            iscage = 1;
            cagecolor = [-1,-1,-1];
            cagethick = 10;
            cagesize = [2/16, 2/16];
            predsize = 1/16;
            //predcoord = [Math.floor(randunif(7,9,1)[0]),Math.floor(randunif(7,9,1)[0])];
            thn_c = thn_c1;
            thn_c1 += 1;
            threatsize = [1/16,1/16];
            } else if (condition==2) {
            condname = "post_encounter";
            iscage = 1;
            cagecolor = [-1,1,-1];
            cagethick = 10;
            cagesize = [2/16, 2/16];
            predsize = 1/16;
            //predcoord = [Math.floor(randunif(7,9,1)[0]),Math.floor(randunif(7,9,1)[0])];
            thn_c = thn_c2;
            thn_c2 += 1;
            threatsize = [1/16,1/16];
            } else if (condition==3) {
            condname = "circa_strike";
            iscage = 0;
            cagecolor = [-1,-1,-1];
            cagethick = 0;
            cagesize = [0, 0];
            predsize = 1/16;
            //predcoord = [Math.floor(randunif(0,16,1)[0]),Math.floor(randunif(0,16,1)[0])];
            thn_c = thn_c3
            thn_c3 += 1;
            threatsize = [0,0];
            }
    ImageComponent GRID
      color = $[-1,-1,-1]
      image = GRID.png
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = tlen
      texture resolution = 512
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    PolygonComponent threat
      fillColor [set every repeat] = $threatcolor
      lineWidth = 0
      opacity = 0.3
      pos [set every repeat] = $threatpos
      shape = rectangle
      size [set every repeat] = (0,0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = tlen
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    TextComponent stop_text
      color = black
      letterHeight = 0.2
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = tlen
      text [set every repeat] = $stopmsg
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    TextComponent caught_text
      color = black
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = tlen
      text [set every repeat] = $caught_msg
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    PolygonComponent cage
      fillColor = $[1,1,1]
      lineColor [set every repeat] = $cagecolor
      lineWidth [set every repeat] = $cagethick
      shape = rectangle
      size [set every repeat] = $cagesize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = tlen
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    PolygonComponent playerTIL
      fillColor = $[-1,-1,1]
      pos [set every repeat] = $playerTILpos
      shape = triangle
      size = (1/16, 1/16)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = tlen
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    PolygonComponent predator
      fillColor = $[1,-1,-1]
      nVertices = 100
      pos [set every repeat] = $predpos
      shape = regular polygon...
      size [set every repeat] = $predsize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = tlen
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    CodeComponent main_code
      Code Type = JS
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      Before JS Experiment:
        import './keyboard.min.js';
        //// Define Necessary Functions
        //
        function numsvec(veclen,n) {
        var arr=Array.apply(null, new Array(veclen)).map(Number.prototype.valueOf,n);
        return arr;
        }

        //
        function vec_multiply(v1,v2) {
        var arr = [];
        for (var i=0;i<v1.length;i++) {
        arr.push(v1[i]*v2[i]);
        }
        return arr;
        }

        //
        function multifunc(func, input) {
        var arr = [];
        for (var i=0;i<input.length;i++) {
        arr.push(func(input[i]));
        }
        return arr;
        }

        //
        function shuffle(array) {
        var currentIndex = array.length, temporaryValue, randomIndex;

        // While there remain elements to shuffle...
        while (0 !== currentIndex) {

          // Pick a remaining element...
          randomIndex = Math.floor(Math.random() * currentIndex);
          currentIndex -= 1;

          // And swap it with the current element.
          temporaryValue = array[currentIndex];
          array[currentIndex] = array[randomIndex];
          array[randomIndex] = temporaryValue;
        }

        return array;
        }

        //
        function linspace(startp,endp,numpoint) {
        var linarr=Array.apply(null, new Array(numpoint)).map(Number.prototype.valueOf,0);
        var step = (endp-startp)/(numpoint-1);
        for(var i = 0; i < numpoint; i++){
        linarr[i]=startp + i*step;
        }
        return linarr
        }

        function range(n) {
        var ranarr = linspace(0,n-1,n);
        return ranarr;
        }

        //
        function findallind(array,element) {
        var indices = [];
        var idx = array.indexOf(element);
        while (idx != -1) {
        indices.push(idx);
        idx = array.indexOf(element, idx + 1);
        }
        return indices
        }

        function sumArrayElements(array1,array2){
        var sumarr = [];
        for (var i=0;i<array1.length;i++) {
          sumarr.push(array1[i]+array2[i]);
          }
          return sumarr;
        }

        //
        function ReplaceArrayElements(array,index,replacevalue) {
        if (replacevalue.length>1) {
        for (var i=0;i<index.length;i++) {
        array[index[i]]=replacevalue[i];
        }
        } else {
        for (var i=0;i<index.length;i++) {
        array[index[i]]=replacevalue;
        }
        }
        return array;
        }

        //
        function randunif(min,max,N) {
          var randarr = [];
          for (var i=0;i<N;i++) {
              randarr.push(min+(max-min)*Math.random());
          }
        return randarr;
        }
      Begin JS Experiment:
        tlen = 16;
        outlen = 0;
        Ntrial = 180;
        unit = 1/16;
        spawnnum=0;

        // Condition list
        condition_thisexp = [0,1,0,1,0,3,0,1,0,3,0,1,0,1,3,0,1,0,2,0,1,0,1,0,3,0,1,0,2,0,1,0,1,0,1,3,0,1,2,0,1,2,0,3,0,1,0,1,2,0,1,0,2,0,1,0,2,0,1,0,3,0,1,0,1,0,1,2,0,1,0,3,0,1,0,1,0,2,0,1,3,0,1,0,1,3,0,1,0,1,0,1,2,0,1,0,3,0,1,0,1,3,0,1,0,1,3,0,1,0,3,0,1,0,1,0,1,3,0,1,0,1,3,0,1,0,1,0,2,0,1,0,1,2,0,1,0,1,2,0,1,3,0,1,0,2,0,1,0,1,2,0,1,0,3,0,1,0,1,2,0,1,0,2,0,2,0,1,0,1,3,0,2,0,1,0,1,2,0,3];
        tlen_seq=[3,3,1,16,16,16,1,9,16,16,1,5,3,16,16,1,9,16,16,5,1,3,7,7,16,7,5,9,16,9,7,3,9,7,16,16,9,16,16,16,1,16,16,16,1,5,3,16,16,5,16,3,16,16,1,16,16,9,3,16,16,5,1,1,16,16,7,16,16,16,5,16,5,1,3,7,7,16,9,16,16,9,7,7,16,16,9,7,3,9,7,16,16,7,5,9,16,3,9,7,9,16,5,16,9,3,16,16,1,16,16,5,1,1,16,16,7,16,1,5,5,5,16,3,3,1,16,16,16,16,3,7,16,16,1,5,5,5,16,16,1,16,16,16,5,16,3,9,7,9,16,5,16,3,16,5,16,9,3,16,9,3,16,16,16,16,16,3,7,16,16,1,16,9,7,7,16,16,1,16];
        condition=0;
        q_trial = [1,9,38,40,67,74,77,81,85,99,110,118,128,164,166,170];
        attacktimelist = [NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN,12, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN,10, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN,2, NaN, NaN,14, NaN, NaN, NaN, NaN, NaN, NaN,15, NaN, NaN, NaN,10, NaN, NaN, NaN,13, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN,7, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN,8, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN,9, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN,1, NaN, NaN, NaN, NaN,5, NaN, NaN, NaN, NaN,9, NaN, NaN, NaN, NaN, NaN, NaN,11, NaN, NaN, NaN, NaN,7, NaN, NaN, NaN, NaN, NaN, NaN, NaN, NaN,6, NaN, NaN, NaN,16, NaN,3, NaN, NaN, NaN, NaN, NaN, NaN,4, NaN, NaN, NaN, NaN,8, NaN, NaN];


        playerTILspd0 = 20; //60;
        playerTILspd = playerTILspd0 ;

        // spawning location
        spawn = [[3,3],[3,12],[12,3],[12,12]];
        spawnseq = [2,0,1,0,3,2,0,1,2,1,3,1,0,0,3,2,1,3,2,3,2,0,1,0,3,2,0,1,2,1,3,1,0,0,3,2,1,3,2,3,2];
        playerTILcoord=spawn[spawnseq[0]];
        playerTILpos = [playerTILcoord[0]*unit-0.5+unit/2, playerTILcoord[1]*unit-0.5+unit/2];

        // Threat position
        movpt = [];
        movpt.push([[6,6,14,8,11,14,10,10,1,11,8,2,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0],
        [8,10,14,10,5,14,9,4,15,10,12,14,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13]]);
        movpt.push([[13,6,0,2,1,10,7,14,7,6,0,15,1,11,6,5,5,9,15,0,3,14,1,7,8,8,13,6,2,13,9,6,14,1,12,2,10,9,11,15,0,1,1,7,11,12,10,0,0,11,7,2,4,10,5,0,3,13,1,15,14,4,6,15,12,1,4,1,9,2,9,14,8,11,3,6,8,11,8,2,13,6,0,2,1,10,7,14,7,6,0,15,1,11,6,5,5,9,15,0,3,14,1,7,8,8,13,6,2,13,9,6,14,1,12,2,10,9,11,15,0,1,1,7,11,12,10,0,0,11,7,2,4,10,5,0,3,13,1,15,14,4,6,15,12,1,4,1,9,2,9,14,8,11,3,6,8,11,8,2,13,6,0,2,1,10,7,14,7,6,0,15,1,11,6,5,5,9,15,0,3,14,1,7,8,8,13,6,2,13,9,6,14,1,12,2,10,9,11,15,0,1,1,7,11,12,10,0,0,11,7,2,4,10,5,0,3,13,1,15,14,4,6,15,12,1,4,1,9,2,9,14,8,11,3,6,8,11,8,2],
        [14,10,13,2,2,7,4,1,3,6,0,14,15,10,7,9,6,7,2,0,3,14,15,9,11,6,14,8,15,1,7,8,2,2,12,14,5,9,6,2,1,13,0,4,11,3,9,13,0,10,6,15,11,4,11,15,7,2,1,1,1,5,10,13,8,1,5,2,8,13,8,14,9,5,12,11,12,8,10,1,14,10,13,2,2,7,4,1,3,6,0,14,15,10,7,9,6,7,2,0,3,14,15,9,11,6,14,8,15,1,7,8,2,2,12,14,5,9,6,2,1,13,0,4,11,3,9,13,0,10,6,15,11,4,11,15,7,2,1,1,1,5,10,13,8,1,5,2,8,13,8,14,9,5,12,11,12,8,10,1,14,10,13,2,2,7,4,1,3,6,0,14,15,10,7,9,6,7,2,0,3,14,15,9,11,6,14,8,15,1,7,8,2,2,12,14,5,9,6,2,1,13,0,4,11,3,9,13,0,10,6,15,11,4,11,15,7,2,1,1,1,5,10,13,8,1,5,2,8,13,8,14,9,5,12,11,12,8,10,1]]);
        movpt.push([[14,10,0,7,13,14,9,11,2,1,1,6,13,10,11,4,11,2,15,15,6,7,6,6,1,10,1,13,10,1,5,0,3,1,5,11,9,4,8,8,11,4,7,0,8,6,1,14,12,15,2,3,1,12,15,11,7,14,1,8,8,9,2,0,3,2,0,6,9,15,0,12,13,14,5,2,6,9,0,7],
        [1,9,13,4,1,14,8,11,14,2,2,10,2,4,6,11,10,15,14,2,7,6,8,8,1,5,15,14,7,0,9,0,3,1,11,10,7,5,9,6,5,5,9,15,12,6,13,2,3,1,15,12,15,8,13,8,4,1,2,11,10,9,13,13,7,1,1,11,8,2,0,12,14,14,6,2,10,7,0,3]]);
        movpt.push([[4,4,11,14,2,3,15,2,11,11,15,14,11,6,12,1,8,14,2,8,10,1,6,7,6,3,11,7,14,7,13,1,15,5,2,2,7,8,2,9,9,4,0,6,7,0,1,13,1,10,0,9,5,1,0,0,12,1,6,9,3,10,5,10,15,8,9,13,13,11,1,0,1,14,6,6,0,8,12,15],
        [11,5,8,1,2,12,2,14,11,5,13,2,10,8,8,1,10,14,15,6,4,1,8,4,11,3,6,9,1,6,1,13,14,9,1,15,4,9,13,8,9,5,0,7,3,0,2,14,2,5,13,7,11,0,15,1,12,2,10,7,7,7,6,9,1,12,8,14,2,10,15,13,15,14,10,6,0,11,3,2]]);

        // threatnum per condition
        thn_c0=0;
        thn_c1=0;
        thn_c2=0;
        thn_c3=0;
        thn_c = 0;

        thmov_ind=0;
        threatcoord = [movpt[condition][0][4*thn_c+thmov_ind],movpt[condition][1][4*thn_c+thmov_ind]] //(every update of threat position)
        threatpos = [threatcoord[0]*unit-0.5+unit/2, threatcoord[1]*unit-0.5+unit/2];

        trialpoint = 0;
        trialpoint_t = 0;
        threatsize = [1/16,1/16];
        get_threat = 0;

        // initial predator speed
        predspd_list = [24,23,22,21,20,19,18,17,16,15,14,13,12];
        level = 8;
        predspd = predspd_list[level];
        sr = 0;
        freepred = 0;
        predsize = 1/16;
        iscage=0;

        //// pred init within cage
        predspawn = [[7,7],[7,8],[8,7],[8,8]];
        predspawnseq = [2,3,1,2,2,0,3,2,0,3,3,2,1,1,0,1,0,1,3,0,2,3,1,2,2,0,3,2,0,3,3,2,1,1,0,1,0,1,3,0,2];
        predcoord=predspawn[predspawnseq[0]];
        predpos = [predcoord[0]*unit-0.5+unit/2, predcoord[1]*unit-0.5+unit/2];


        Nframe = 0;
        ud_mov = 0;
        rl_mov = 0;
        temppredcoord = predpos;
        cost0  = 0;
        costxy = 0;
        ucost = 0;
        dcost = 0;
        rcost = 0;
        lcost = 0;
        cost = [0,0,0,0];
        midx = 100;
        hold_flag = 0;
        rorl=0;

        // Define conditions
        condition = 0;
        condition_next = 0;
        tn=0;
        condname="";
        cagecolor = [-1,-1,-1];
        cagethick = 5;
        cagesize = [0,0];
        predsize = [0,0];
        threat_flag=0;
        caught = 0;
        caught_msg = "";
        caught_flag=0;
        threatcolor = [1,1,-1];
        rewardcolor = [0,1,0];
        get_threat = 0;
        next_arrow = "";
        next_con_fig = "";

        stop_t = 0;
        stop_dur = 0;
        stop_flag = 0;
        stopmsg = "";
        stop_lim = 2;
        stopped = 0;

        tlim = 1/70;
        prev_attack_time = 0;
        playerTILx_t=[];
        playerTILy_t=[];
        predx_t=[];
        predy_t=[];
        threatpos_t=[];
        playerTILspd_t = [];
        predspd_t = [];
        trialtime = [];
        trialframe = [];
      Begin JS Routine:
        //// out of cage
        Nframe = 0;
        ud_mov = 0;
        rl_mov = 0;
        temppredcoord = predpos;
        cost0  = 0;
        costxy = 0;
        ucost = 0;
        dcost = 0;
        rcost = 0;
        lcost = 0;
        cost = [0,0,0,0];
        midx = 100;
        hold_flag = 0;
        rorl=0;
        playerTILspd = playerTILspd0;
        predspawn = [[7,7],[7,8],[8,7],[8,8]];
        // if (caught_flag==1) {
        //     playerTILcoord=spawn[spawnseq[caught]];
        //    predcoord = predspawn[predspawnseq[caught]];
        //    }

        caught_msg = "";
        caught_flag=0;

        trialpoint = 0;
        trialpoint_t = 10;

        predpos = [predcoord[0]*unit-0.5+unit/2, predcoord[1]*unit-0.5+unit/2];
        predator.setPos(predpos);
        predator.setSize(predsize);

        if (sr>0.5) {
            level += 1;
            level = Math.min(level,12);
            predspd = predspd_list[level];
            } else {
                level -= 1;
                level = Math.max(level,0);
                predspd = predspd_list[level];
                }

        prev_attack_time = 0;

        playerTILpos = [playerTILcoord[0]*unit-0.5+unit/2, playerTILcoord[1]*unit-0.5+unit/2];
        playerTIL.setPos(playerTILpos);


        thmov_ind=0; // (each routine)
        threatcoord = [movpt[condition][0][4*thn_c+thmov_ind],movpt[condition][1][4*thn_c+thmov_ind]] //(every update of threat position)
        threatpos = [threatcoord[0]*unit-0.5+unit/2, threatcoord[1]*unit-0.5+unit/2];

        threat.setPos(threatpos);

        attacktime = attacktimelist[tn]; //2+Math.floor(Math.random()*8)*2;
        get_threat = 0;

        stop_t = 0;
        stop_dur = 0;
        stop_flag = 0;
        stopmsg = "";
        stopped = 0;

        stop_text.setText(stopmsg);
        caught_text.setText(caught_msg);

        playerTILx_t=[];
        playerTILy_t=[];
        predx_t=[];
        predy_t=[];
        threatpos_t=[];
        rewardpos_t=[];
        playerTILspd_t = [];
        predspd_t = [];

        trialtime = [];
        trialframe = [];

        outlen = 0;
        tlen = tlen_seq[tn];
      Each JS Frame:
        // Threat related code
        if ((Nframe%60)==30) {
            threat.setSize([0,0]);
            } else if ((Nframe%60)==0) {
                if (iscage==1) {
                    threat.setSize(threatsize);
                    }
                }

        if ((Nframe%2)==0) {
            playerTIL.setPos(playerTILpos);
            predator.setPos(predpos);
            threat.setPos(threatpos);

            caught_text.setText(caught_msg);
            stop_text.setText(stopmsg);
            playerTILx_t.push(playerTILcoord[0]);
            playerTILy_t.push(playerTILcoord[1]);

            predx_t.push(predcoord[0]);
            predy_t.push(predcoord[1]);
            threatpos_t.push(threatcoord);

            playerTILspd_t.push(playerTILspd);
            predspd_t.push(predspd);
            trialtime.push(trialClock.getTime());
            trialframe.push(Nframe);

            if ((playerTILcoord[0]==threatcoord[0])&&(playerTILcoord[1]==threatcoord[1])) {
                //trialpoint_t -= 1;
                if (iscage==1) {
                    get_threat += 1;;
                    }
                }
            }

        if (((playerTILcoord[0]==predcoord[0])&&(playerTILcoord[1]==predcoord[1])) && (condition>0)) {
            caught_flag=1;
            caught += 1;
            caught_msg = "";
            trialpoint_t -= 40;
            //
            continueRoutine = false;
            //
            }

        if (condition==2) {
            if (trialClock.getTime()>attacktime){
                iscage = 0;
                }
            }

        ////////////////// Insert Keyboard Input Code ///////////////////////////////////
        keyboardJS.bind('up', (e) => {
            ud_mov = 1;
            rl_mov = 0;
        }, (e) => {
            ud_mov = 0;
        });
        keyboardJS.bind('down', (e) => {
            ud_mov = -1;
            rl_mov = 0;
        }, (e) => {
            ud_mov = 0;
        });
        keyboardJS.bind('right', (e) => {
            rl_mov = 1;
            ud_mov = 0;
        }, (e) => {
            rl_mov = 0;
        });
        keyboardJS.bind('left', (e) => {
            rl_mov = -1;
            ud_mov = 0;
        }, (e) => {
            rl_mov = 0;
        });
        keyboardJS.bind('up+down', (e) => {
            rl_mov = 0;
            ud_mov = 0;
        }, (e) => {
            rl_mov = 0;
            ud_mov = 0;
        });
        keyboardJS.bind('right+left', (e) => {
            rl_mov = 0;
            ud_mov = 0;
        }, (e) => {
            rl_mov = 0;
            ud_mov = 0;
        });

        if ((rl_mov===0) && (ud_mov===0)) {
            if (stop_flag === 0) {
                stop_t = trialClock.getTime();
                stop_flag = 1;
                } else if (stop_flag === 1) {
                    stop_dur = trialClock.getTime() - stop_t;
                    if (stop_dur > stop_lim) {
                    stopmsg ="Make Movement!";
                        }
                    }
            }  else {
                if (stopmsg =="Make Movement!") {
                    stopped += 1;
                    }
                stop_flag = 0;
                stopmsg = "";
                }



        if ((Nframe%playerTILspd)==(playerTILspd-1)) {
            playerTILcoord[1] += ud_mov;
            playerTILcoord[0] += rl_mov;
            if ((playerTILcoord[0] >15) || (playerTILcoord[0] <0) || (playerTILcoord[1] >15) || (playerTILcoord[1] <0)) {
                playerTILcoord[1] -= ud_mov;
                playerTILcoord[0] -= rl_mov;
                }
            }
        playerTILpos = [playerTILcoord[0]*unit-0.5+unit/2, playerTILcoord[1]*unit-0.5+unit/2];

        if ((iscage === 1)) {
            if ((Nframe%(6*predspd))==(3*predspd-1)) {
                rorl = Math.floor(Math.random()*2);
                predcoord[0] = 7+Math.floor(Math.random()*2)*rorl;
                predcoord[1] = 7+Math.floor(Math.random()*2)*rorl;
                }
            } else if ((iscage === 0)) {
                if ((Nframe%predspd)==(predspd-1)) {
                    temppredcoord = predcoord;
                    cost0 = sumArrayElements(temppredcoord,playerTILcoord.map(function(x) { return x * -1; }));
                    costxy = multifunc(Math.abs,sumArrayElements(cost0, [0, 1]));
                    ucost = costxy[0]+costxy[1];
                    costxy = multifunc(Math.abs,sumArrayElements(cost0, [0, -1]));
                    dcost = costxy[0]+costxy[1];
                    costxy = multifunc(Math.abs,sumArrayElements(cost0, [1, 0]));
                    rcost = costxy[0]+costxy[1];
                    costxy = multifunc(Math.abs,sumArrayElements(cost0, [-1, 0]));
                    lcost = costxy[0]+costxy[1];
                    cost = [ucost, dcost, rcost, lcost];
                    midx = findallind(cost,Math.min.apply(Math,cost));
                    if (midx.length>1) {
                        midx = midx[Math.round(Math.random())];
                        }
                    //midx = cost.indexOf(Math.min.apply(Math,cost));
                    if ((midx == 0)) {
                        temppredcoord[1] += 1;
                        } else {
                            if ((midx == 1)) {
                                temppredcoord[1] -= 1;
                                } else {
                                    if ((midx == 2)) {
                                        temppredcoord[0] += 1;
                                        } else {
                                            if ((midx == 3)) {
                                                temppredcoord[0] -= 1;
                                                }
                                            }
                                        }
                                    predcoord = temppredcoord;
                                    }
                                }
                            }
        predpos = [predcoord[0]*unit-0.5+unit/2, predcoord[1]*unit-0.5+unit/2];

        if ((Nframe%240)==239) {
            thmov_ind += 1;
            threatcoord = [movpt[condition][0][4*thn_c+thmov_ind],movpt[condition][1][4*thn_c+thmov_ind]] //(every update of threat position)
            threatpos = [threatcoord[0]*unit-0.5+unit/2, threatcoord[1]*unit-0.5+unit/2];
            }

        Nframe += 1;
      End JS Routine:
        if (condition>1) {
            spawnnum+=1;
            if (caught_flag==1) {
                playerTILcoord=spawn[spawnseq[caught]];
                }
            predcoord=predspawn[predspawnseq[spawnnum]];
            freepred += 1;
            sr = 1 - (caught/freepred);
            }

        predpos = [predcoord[0]*unit-0.5+unit/2, predcoord[1]*unit-0.5+unit/2];
        playerTILpos = [playerTILcoord[0]*unit-0.5+unit/2, playerTILcoord[1]*unit-0.5+unit/2];

        if (tn==1) {
            psychoJS.experiment.addData('qtrials',q_trial);
            }


        next_time = 2;
        psychoJS.experiment.addData('trialnum',tn);
        tn += 1;

        if (tn===Ntrial) {
            next_time = 0;
            }

        condition_next = condition_thisexp[tn];



        psychoJS.experiment.addData('condition',condition);
        psychoJS.experiment.addData('playerTILx',playerTILx_t);
        psychoJS.experiment.addData('playerTILy',playerTILy_t);
        psychoJS.experiment.addData('predx',predx_t);
        psychoJS.experiment.addData('predy',predy_t);
        psychoJS.experiment.addData('threatpos',threatpos_t);
        psychoJS.experiment.addData('playerTILspd',playerTILspd_t );
        psychoJS.experiment.addData('predspd',predspd_t);
        psychoJS.experiment.addData('caught',caught);
        psychoJS.experiment.addData('caught_flag',caught_flag);
        psychoJS.experiment.addData('threat_get',get_threat);
        psychoJS.experiment.addData('attacktime',attacktime);
        psychoJS.experiment.addData('stopnum',stopped);
        psychoJS.experiment.addData('trialtime',trialtime);
        psychoJS.experiment.addData('trialframe',trialframe);
        psychoJS.experiment.addData('trialpoint',trialpoint_t);

        condition = condition_next;

        psychoJS.eventManager.clearEvents();
        psychoJS.eventManager.clearKeys();
        keyboardJS.reset();
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
  Routine start_example
    TextComponent start_fix_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine Start_Main
    TextComponent press_space_to_start
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You completed a tutorial.
        If you are ready to start main experiment,
        press space bar
    KeyboardComponent press_space_to_start_key
      allowedKeys = 'space','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Introduction
    CodeComponent Intro_code
      Code Type = JS
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      Begin JS Experiment:
        i_image = 'I1.png';
        inst_page = 1;
        move_inst = '';
      Begin JS Routine:
        Instruction_Image.setImage(i_image);
      Each JS Frame:
        let inst_move_keys = psychoJS.eventManager.getKeys();
        if (inst_move_keys.length > 0) {  // at least one key was pressed
          move_inst = inst_move_keys[inst_move_keys.length-1];
          }

        if ((inst_page>1)&&(move_inst=='left')) {
            inst_page -= 1;
            i_image = 'I'+inst_page+'.png';
            Instruction_Image.setImage(i_image);
            }
        if (move_inst=='right') {
            inst_page += 1;
            if (inst_page==7) {
                continueRoutine = false;
                } else {
                    i_image = 'I'+inst_page+'.png';
                    Instruction_Image.setImage(i_image);
                    }
            }
        move_inst = '';
    ImageComponent Instruction_Image
      image [set every frame] = $i_image
      size = (1.4, 0.8)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent Instruction_Press_Space
      allowedKeys = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine Instruction_Final_Page
    KeyboardComponent Instruction_Space_Final
      allowedKeys = 'space',''
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent Instruction_Image_Final
      image = I7.png
      size = (1.4, 0.8)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent text
      color = black
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = To start tutorial, press space bar
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
  Routine EndExp
    TextComponent EOP
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        This is the end of the main experiment.
        In the remaining part of experiment, you will be asked to complete some surveys.
        If you are ready, please press ‘Enter’ key.
    KeyboardComponent EOP_Key
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine DemoQ_Explanation
    TextComponent DemoQ_Inst_Text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Survey 2.
        We will ask you about your demographic information.
        Please answer the questions using keyboard.
        Press ‘Enter’ key to move to the next question
    KeyboardComponent DemoQ_Start_Enter
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine DemoQRoutime
    KeyboardComponent DemoQ_key_resp
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent DemoQ_Instruction
      letterHeight = 0.03
      pos = (-.1, -0.4)
      startVal [time (s)] = 0.0
      text = Type answers using keyboard and press 'Enter' key
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    TextComponent DemoQ_Answer
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = ""
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    CodeComponent DemoQ_Code
      Code Type = JS
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      Begin JS Experiment:
        modify = false;
        DemoQ_Answer.text = "";
      Begin JS Routine:
        modify = false;
        DemoQ_Answer.text = "";
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            DemoQ_Answer.text =  DemoQ_Answer.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                DemoQ_Answer.text =  DemoQ_Answer.text + textAdd.toUpperCase();
                modify = false;
            } else {
                DemoQ_Answer.text =  DemoQ_Answer.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("DemoQ_Answer",  DemoQ_Answer.text);
        DemoQ_Answer.setText("");  // empty the onscreen text ready for next input
    TextComponent DemoQ_Text
      letterHeight = 0.03
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $DemoQ
      wrapWidth = 1
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    PolygonComponent Underline_DemoQ
      fillColor = $[1,1,1]
      pos = (0, -0.28)
      shape = line
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent YourAnswer
      letterHeight = 0.03
      pos = (-0.3, -0.25)
      startVal [time (s)] = 0.0
      text = Answer
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  Routine STAI_Instruction
    TextComponent STAI_inst_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Survey 3.
        A number of statements which people have used to describe themselves are given below. Read each statement and then mark the appropriate number to the right of the statement to indicate HOW YOU GENERALLY FEEL. There are no right or wrong answers. Do not spend too much time on any one statement but give the answer that seems to describe how you generally feel.

        Use mouse click to check the answer.
        To start the survey, please press ‘Enter’ key.
    KeyboardComponent STAI_inst_enter
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine STAI_Routine
    PolygonComponent Line_STAI
      fillColor = $[1,1,1]
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = norm
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    SliderComponent STAI_slider
      forceEndRoutine = False
      granularity = 1
      labels = 'Almost never','Sometimes','Often','Almost Always'
      size = (1.0, 0.04)
      startVal [time (s)] = 0.0
      styles = ['rating', 'radio']
      ticks = (1, 2, 3, 4)
      units = norm
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    TextComponent STAI_Question_Text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Question_STAIT
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    CodeComponent STAI_code
      Code Type = JS
      Begin JS Experiment:
         RatingEndCount = 0;
      Begin JS Routine:
         RatingEndCount = 0;
      Each JS Frame:
         if (STAI_slider.getRating() !== undefined &&STAI_slider.status === PsychoJS.Status.STARTED) {
            RatingEndCount+=1;
           if (RatingEndCount>20) {
              continueRoutine = false;
              }
              }
    TextComponent MouseClick_11
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Click on the scale to rate the score
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  Routine BISBAS_Instruction
    TextComponent BISBAS_inst_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Survey 4.
        Each item on this questionnaire is a statement that a person may either agree with or disagree with. For each item, indicate how much you agree or disagree with what the item says. Please respond to all of the items, and choose only one response to each statement. Please be as accurate and honest as you can be. Respond to each item as if it were the only item. That is, don’t worry about being “consistent” in your responses.

        Use mouse click to check the answer.
        To start the survey, please press ‘Enter’ key.
    KeyboardComponent BISBAS_inst_enter
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine BISBAS_Routine
    PolygonComponent Line_BISBAS
      fillColor = $[1,1,1]
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = norm
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    SliderComponent BISBAS_slider
      forceEndRoutine = False
      granularity = 1
      labels = 'Strongly Disagree','Somewhat Disagree','Somewhat Agree','Strongly Agree'
      size = (1.0, 0.04)
      startVal [time (s)] = 0.0
      styles = ['rating', 'radio']
      ticks = (1, 2, 3, 4)
      units = norm
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    TextComponent BISBAS_Question_Text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Question_bisbas
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    CodeComponent BISBAS_code
      Code Type = JS
      Begin JS Experiment:
         RatingEndCount = 0;
      Begin JS Routine:
         RatingEndCount = 0;
      Each JS Frame:
         if (BISBAS_slider.getRating() !== undefined &&BISBAS_slider.status === PsychoJS.Status.STARTED) {
            RatingEndCount+=1;
           if (RatingEndCount>20) {
              continueRoutine = false;
              }
              }
    TextComponent MouseClick_10
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Click on the scale to rate the score
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  Routine FinalScreen
    TextComponent FinalText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        You completed all experiments.
        Thank you for your patience.
    CodeComponent FinalScreenCode
      Code Type = JS
      End JS Routine:
        TotalExpTime.push(TotalExpClock.getTime());
        psychoJS.experiment.addData('Time_EndExp',TotalExpClock.getTime());
        psychoJS.experiment.addData('Time_All',TotalExpTime);
  Routine IRB_Consent
    CodeComponent IRB_move_code
      Code Type = JS
      Begin JS Experiment:
        ConSlide = 'Con1.png';
        irb_page = 1;
        move_inst = '';
      Begin JS Routine:
        Consent_Slide_Image.setImage(ConSlide);
      Each JS Frame:
        let inst_move_keys = psychoJS.eventManager.getKeys();
        if (inst_move_keys.length > 0) {  // at least one key was pressed
          move_inst = inst_move_keys[inst_move_keys.length-1];
          }

        if ((irb_page>1)&&(move_inst=='left')) {
            irb_page -= 1;
            ConSlide= 'Con'+irb_page+'.png';
            Consent_Slide_Image.setImage(ConSlide);
            }
        if (move_inst=='right') {
            irb_page += 1;
            if (irb_page==6) {
                continueRoutine = false;
                } else {
                    ConSlide= 'Con'+irb_page+'.png';
                    Consent_Slide_Image.setImage(ConSlide);
                    }
            }
        move_inst = '';
    ImageComponent Consent_Slide_Image
      image [set every frame] = $ConSlide
      size = (1.4, 1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent Consent_Press_Space
      allowedKeys = 'y','n','space','left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine Consent
    KeyboardComponent Consent_Key
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent Consent_Code
      Code Type = JS
      Begin JS Experiment:
        TotalExpClock = new util.Clock();
        TotalExpTime = [];
      Begin JS Routine:
        TotalExpTime.push(TotalExpClock.getTime());
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          ConsentAdd= theseKeys[theseKeys.length-1];
          }
        if (ConsentAdd==='n') {
             return quitPsychoJS('Thank you, see you next time', false);
            }
      End JS Routine:
        TotalExpTime.push(TotalExpClock.getTime());
        psychoJS.experiment.addData('Time_StartInstruction',TotalExpClock.getTime());
    ImageComponent Final_Consent_Image
      image = Con6.png
      size = (1.4, 1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine trial_example
    CodeComponent cage_code_3
      Code Type = JS
      Begin JS Routine:
        if (condition==0) {
            condname = "safe";
            iscage = 1;
            cagecolor = [-1,-1,-1];
            cagethick = 10;
            cagesize = [2/16, 2/16];
            predsize = 0;
            predcoord = [100,100];
            thn_c=10;
            threatsize = [1/16,1/16];
            } else if (condition==1) {
            condname = "pre_encounter";
            iscage = 1;
            cagecolor = [-1,-1,-1];
            cagethick = 10;
            cagesize = [2/16, 2/16];
            predsize = 1/16;
            predcoord = [Math.floor(randunif(7,9,1)[0]),Math.floor(randunif(7,9,1)[0])];
            thn_c=10;
            threatsize = [1/16,1/16];
            } else if (condition==2) {
            condname = "post_encounter";
            iscage = 1;
            cagecolor = [-1,1,-1];
            cagethick = 10;
            cagesize = [2/16, 2/16];
            predsize = 1/16;
            predcoord = [Math.floor(randunif(7,9,1)[0]),Math.floor(randunif(7,9,1)[0])];
            thn_c=10;
            threatsize = [1/16,1/16];
            } else if (condition==3) {
            condname = "circa_strike";
            iscage = 0;
            cagecolor = [-1,-1,-1];
            cagethick = 0;
            cagesize = [0, 0];
            predsize = 1/16;
            predcoord = [Math.floor(randunif(0,16,1)[0]),Math.floor(randunif(0,16,1)[0])];
            thn_c=10;
            threatsize = [0,0];
            }
    ImageComponent GRID_3
      color = $[-1,-1,-1]
      image = GRID.png
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = tlen
      texture resolution = 512
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    PolygonComponent threat_3
      fillColor [set every repeat] = $threatcolor
      lineWidth = 0
      opacity = 0.3
      pos [set every repeat] = $threatpos
      shape = rectangle
      size [set every repeat] = (0,0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = tlen
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    TextComponent stop_text_3
      color = black
      letterHeight = 0.2
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = tlen
      text [set every repeat] = $stopmsg
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    TextComponent caught_text_3
      color = black
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = tlen
      text [set every repeat] = $caught_msg
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    PolygonComponent cage_3
      fillColor = $[1,1,1]
      lineColor [set every repeat] = $cagecolor
      lineWidth [set every repeat] = $cagethick
      shape = rectangle
      size [set every repeat] = $cagesize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = tlen
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    PolygonComponent playerTIL_3
      fillColor = $[-1,-1,1]
      pos [set every repeat] = $playerTILpos
      shape = triangle
      size = (1/16, 1/16)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = tlen
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    PolygonComponent predator_3
      fillColor = $[1,-1,-1]
      nVertices = 100
      pos [set every repeat] = $predpos
      shape = regular polygon...
      size [set every repeat] = $predsize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = tlen
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    CodeComponent main_code_2
      Code Type = JS
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      Begin JS Experiment:
        tn_example = 0;
        caught_example = 0;
        next_time = 2;
        threatnum_ex = 0;
      Begin JS Routine:
        //// out of cage
        Nframe = 0;
        ud_mov = 0;
        rl_mov = 0;
        temppredcoord = predpos;
        cost0  = 0;
        costxy = 0;
        ucost = 0;
        dcost = 0;
        rcost = 0;
        lcost = 0;
        cost = [0,0,0,0];
        midx = 100;
        hold_flag = 0;
        rorl=0;
        playerTILspd = playerTILspd0;
        caught_msg = "";
        caught_flag=0;

        predcoord = [7,8];
        predpos = [predcoord[0]*unit-0.5+unit/2, predcoord[1]*unit-0.5+unit/2];
        predator_3.setPos(predpos);

        prev_attack_time = 0;

        playerTILcoord=[Math.floor(randunif(0,16,1)[0]),Math.floor(randunif(0,16,1)[0])];
        while (((playerTILcoord[0]>6) && (playerTILcoord[0]<9)) && ((playerTILcoord[1]>6) && (playerTILcoord[1]<9))) {
            playerTILcoord = [Math.floor(randunif(0,16,1)[0]),Math.floor(randunif(0,16,1)[0])];
            }
        playerTILpos = [playerTILcoord[0]*unit-0.5+unit/2, playerTILcoord[1]*unit-0.5+unit/2];
        playerTIL_3.setPos(playerTILpos);

        thmov_ind=0; // (each routine)
        threatcoord = [movpt[condition][0][4*thn_c+thmov_ind],movpt[condition][1][4*thn_c+thmov_ind]] //(every update of threat position)
        threatpos = [threatcoord[0]*unit-0.5+unit/2, threatcoord[1]*unit-0.5+unit/2];

        threat_3.setPos(threatpos);
        attacktime = 2+Math.floor(Math.random()*8)*2;
        threat_flag=0;
        caught = 0;
        get_threat = 0;

        stop_t = 0;
        stop_dur = 0;
        stop_flag = 0;
        stopmsg = "";
        stopped = 0;

        stop_text_3.setText(stopmsg);
        caught_text_3.setText(caught_msg);

        playerTILx_t=[];
        playerTILy_t=[];
        predx_t=[];
        predy_t=[];
        threatpos_t=[];
        playerTILspd_t = [];
        predspd_t = [];

        trialtime = [];
        trialframe = [];
      Each JS Frame:
        // Threat related code
        if ((Nframe%60)==30) {
            threat_3.setSize([0,0]);
            } else if ((Nframe%60)==0) {
                if (iscage==1) {
                    threat_3.setSize(threatsize);
                    }
                }

        if ((Nframe%2)==0) {
            playerTIL_3.setPos(playerTILpos);
            predator_3.setPos(predpos);
            threat_3.setPos(threatpos);

            caught_text_3.setText(caught_msg);
            stop_text_3.setText(stopmsg);
            playerTILx_t.push(playerTILcoord[0]);
            playerTILy_t.push(playerTILcoord[1]);

            predx_t.push(predcoord[0]);
            predy_t.push(predcoord[1]);
            threatpos_t.push(threatcoord);

            playerTILspd_t.push(playerTILspd);
            predspd_t.push(predspd);
            trialtime.push(trial_exampleClock.getTime());
            trialframe.push(Nframe);

            if ((playerTILcoord[0]==threatcoord[0])&&(playerTILcoord[1]==threatcoord[1])) {
                //trialpoint_t -= 1;
                if (iscage==1) {
                    //get_threat += 1;;
                    }
                }
            }

        if (((playerTILcoord[0]==predcoord[0])&&(playerTILcoord[1]==predcoord[1])) && (condition>0)) {
            //caught_flag=1;
            //caught += 1;
            caught_msg = "";
            //
            continueRoutine = false;
            //
            }

        if (condition==2) {
            if (trial_exampleClock.getTime()>attacktime){
                iscage = 0;
                }
            }

        ////////////////// Insert Keyboard Input Code ///////////////////////////////////
        keyboardJS.bind('up', (e) => {
            ud_mov = 1;
            rl_mov = 0;
        }, (e) => {
            ud_mov = 0;
        });
        keyboardJS.bind('down', (e) => {
            ud_mov = -1;
            rl_mov = 0;
        }, (e) => {
            ud_mov = 0;
        });
        keyboardJS.bind('right', (e) => {
            rl_mov = 1;
            ud_mov = 0;
        }, (e) => {
            rl_mov = 0;
        });
        keyboardJS.bind('left', (e) => {
            rl_mov = -1;
            ud_mov = 0;
        }, (e) => {
            rl_mov = 0;
        });
        keyboardJS.bind('up+down', (e) => {
            rl_mov = 0;
            ud_mov = 0;
        }, (e) => {
            rl_mov = 0;
            ud_mov = 0;
        });
        keyboardJS.bind('right+left', (e) => {
            rl_mov = 0;
            ud_mov = 0;
        }, (e) => {
            rl_mov = 0;
            ud_mov = 0;
        });

        if ((rl_mov===0) && (ud_mov===0)) {
            if (stop_flag === 0) {
                stop_t = trial_exampleClock.getTime();
                stop_flag = 1;
                } else if (stop_flag === 1) {
                    stop_dur = trial_exampleClock.getTime() - stop_t;
                    if (stop_dur > stop_lim) {
                    stopmsg ="Make Movement!";
                        }
                    }
            }  else {
                if (stopmsg =="Make Movement!") {
                    stopped += 1;
                    }
                stop_flag = 0;
                stopmsg = "";
                }



        if ((Nframe%playerTILspd)==(playerTILspd-1)) {
            playerTILcoord[1] += ud_mov;
            playerTILcoord[0] += rl_mov;
            if ((playerTILcoord[0] >15) || (playerTILcoord[0] <0) || (playerTILcoord[1] >15) || (playerTILcoord[1] <0)) {
                playerTILcoord[1] -= ud_mov;
                playerTILcoord[0] -= rl_mov;
                }
            }
        playerTILpos = [playerTILcoord[0]*unit-0.5+unit/2, playerTILcoord[1]*unit-0.5+unit/2];

        if ((iscage === 1)) {
            if ((Nframe%(6*predspd))==(3*predspd-1)) {
                rorl = Math.floor(Math.random()*2);
                predcoord[0] = 7+Math.floor(Math.random()*2)*rorl;
                predcoord[1] = 7+Math.floor(Math.random()*2)*rorl;
                }
            } else if ((iscage === 0)) {

                move_away_flash.setText("");

                if ((Nframe%predspd)==(predspd-1)) {
                    temppredcoord = predcoord;
                    cost0 = sumArrayElements(temppredcoord,playerTILcoord.map(function(x) { return x * -1; }));
                    costxy = multifunc(Math.abs,sumArrayElements(cost0, [0, 1]));
                    ucost = costxy[0]+costxy[1];
                    costxy = multifunc(Math.abs,sumArrayElements(cost0, [0, -1]));
                    dcost = costxy[0]+costxy[1];
                    costxy = multifunc(Math.abs,sumArrayElements(cost0, [1, 0]));
                    rcost = costxy[0]+costxy[1];
                    costxy = multifunc(Math.abs,sumArrayElements(cost0, [-1, 0]));
                    lcost = costxy[0]+costxy[1];
                    cost = [ucost, dcost, rcost, lcost];
                    midx = findallind(cost,Math.min.apply(Math,cost));
                    if (midx.length>1) {
                        midx = midx[Math.round(Math.random())];
                        }
                    if ((midx == 0)) {
                        temppredcoord[1] += 1;
                        } else {
                            if ((midx == 1)) {
                                temppredcoord[1] -= 1;
                                } else {
                                    if ((midx == 2)) {
                                        temppredcoord[0] += 1;
                                        } else {
                                            if ((midx == 3)) {
                                                temppredcoord[0] -= 1;
                                                }
                                            }
                                        }
                                    predcoord = temppredcoord;
                                    }
                                }
                            }
        predpos = [predcoord[0]*unit-0.5+unit/2, predcoord[1]*unit-0.5+unit/2];

        if ((Nframe%240)==239) {
            thmov_ind += 1;
            threatcoord = [movpt[condition][0][4*thn_c+thmov_ind],movpt[condition][1][4*thn_c+thmov_ind]] //(every update of threat position)
            threatpos = [threatcoord[0]*unit-0.5+unit/2, threatcoord[1]*unit-0.5+unit/2];
            }

        Nframe += 1;
      End JS Routine:
        tn_example += 1;
        condition_next = tn_example;

        psychoJS.experiment.addData('trialnum_example',tn_example);
        psychoJS.experiment.addData('condition_example',condition);
        psychoJS.experiment.addData('playerTILx_example',playerTILx_t);
        psychoJS.experiment.addData('playerTILy_example',playerTILy_t);
        psychoJS.experiment.addData('predx_example',predx_t);
        psychoJS.experiment.addData('predy_example',predy_t);
        psychoJS.experiment.addData('threatpos_example',threatpos_t);
        psychoJS.experiment.addData('playerTILspd_example',playerTILspd_t );
        psychoJS.experiment.addData('predspd_example',predspd_t);
        psychoJS.experiment.addData('caught_example',caught);
        psychoJS.experiment.addData('caught_example_flag',caught_flag);
        psychoJS.experiment.addData('threat_get_example',get_threat);
        psychoJS.experiment.addData('attacktime_example',attacktime);
        psychoJS.experiment.addData('stopnum_example',stopped);
        psychoJS.experiment.addData('trialtime_example',trialtime);
        psychoJS.experiment.addData('trialframe_example',trialframe);

        //  Start  of main experiment
        condition = condition_next;
        if (condition_next==4) {
            condition = 0;
            next_time = 0;
            }

        psychoJS.eventManager.clearEvents();
        psychoJS.eventManager.clearKeys();
        keyboardJS.reset();
    TextComponent move_away_flash
      color = black
      letterHeight = 0.02
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = tlen
      text = Remember to move away as far as possible from the yellow square as possible
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
  Routine embody_q
    CodeComponent code
      Code Type = JS
      Begin JS Experiment:
        i=0;
        mousenum = 0;
        npoints = 200;
        csize = 1/60;
        cx = [];
        for (i=0;i<npoints;i++) {
            cx.push(new visual.Polygon ({
            win: psychoJS.window, name: 'c0',
            edges: 50, size:[0, 0],
            ori: 0, pos: [0, 0],
            lineWidth: 0, lineColor: new util.Color([1, 1, 1]),
            fillColor: new util.Color([1, -1, -1]),
            opacity: 0.5, depth: 0, interpolate: true,
            }));
            }
      Begin JS Routine:
        mousenum = 0;
        continueRoutine = false;

        predsize=0;
        //predator_embody.setSize(0);
        //predator.setSize(0);
        //predator_Q.setSize(0);
      Each JS Frame:
        continueRoutine = false;
        if (isdummyStart) {
            continueRoutine = true;
           }
      End JS Routine:
        for (i=0;i<npoints;i++) {
            cx[i].setAutoDraw(false);
            }

        isdummyStart=false
    ImageComponent body_image
      image = base.png
      size = (1,1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_body
      clickable = reset_rect
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_body
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent lt_text_body
      color = black
      letterHeight = 0.025
      pos = (-0.33, -0.45)
      startVal [time (s)] = 0.0
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      text:
        for this body, color the regions
        whose activity you feel
        increasing or getting stronger
    TextComponent rt_text_body
      color = black
      letterHeight = 0.025
      pos = (+0.33, -0.45)
      startVal [time (s)] = 0.0
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      text:
        for this body, color the regions
        whose activity you feel
        decreasing or getting weaker
    TextComponent body_explanation
      color = black
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Use the pictures to indicate
        the bodily sensations
        you feel now
    TextComponent body_progress
      color = black
      letterHeight = 0.02
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = Press 'Enter' to go to the next page
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    PolygonComponent reset_rect
      fillColor = $[1,1,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      pos = (0, -0.4)
      shape = rectangle
      size = (0.1, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent reset_text
      color = black
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = RESET
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  Routine STICSA_Instruction
    TextComponent STICSA_inst_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Survey 5.
        Below is a list of statements which can be used to describe how people feel. Beside each statement are four numbers which indicate how often each statement is true of you (e.g., 1 not at all 4 very much so). Please read each statement carefully and check the number which best indicates how often, in general, the statement is true of you.

        Use mouse click to check the answer.
        To start the survey, please press ‘Enter’ key.
    KeyboardComponent STICSA_inst_enter
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine STICSA_Routine
    PolygonComponent Line_STICSA
      fillColor = $[1,1,1]
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = norm
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    SliderComponent STICSA_slider
      forceEndRoutine = False
      granularity = 1
      labels = 'Not at all','A little','Moderately','Very much so'
      size = (1.0, 0.04)
      startVal [time (s)] = 0.0
      styles = ['rating', 'radio']
      ticks = (1, 2, 3, 4)
      units = norm
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    TextComponent STICSA_Question_Text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Question_STICSA
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    CodeComponent STICSA_code
      Code Type = JS
      Begin JS Experiment:
         RatingEndCount = 0;
      Begin JS Routine:
         RatingEndCount = 0;
      Each JS Frame:
         if (STICSA_slider.getRating() !== undefined &&STICSA_slider.status === PsychoJS.Status.STARTED) {
            RatingEndCount+=1;
           if (RatingEndCount>20) {
              continueRoutine = false;
              }
              }
    TextComponent MouseClick_7
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Click on the scale to rate the score
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  Routine dummy_trial_embody
    CodeComponent cage_code_embody
      Code Type = JS
      Begin JS Experiment:
        embody_cond_list=[3,0,2,1,3,1,0,2];
        embody_trial=[16,45,64,87,105,126,143,174];
        embody_count=0;
        isdummyStart = false;
      Begin JS Routine:
        if (embody_trial.includes(tn)) {
            isdummyStart = true;
            } else {
                isdummyStart = false;
                }

        if (isdummyStart) {
            embody_cond=embody_cond_list[embody_count];
            if (embody_cond==0) {
                condname = "safe";
                iscage = 1;
                cagecolor = [-1,-1,-1];
                cagethick = 10;
                cagesize = [2/16, 2/16];
                predsize = 0;
                //predcoord = [100,100];
                thn_c = thn_c0;
                threatsize = [1/16,1/16];
                } else if (embody_cond==1) {
                condname = "pre_encounter";
                iscage = 1;
                cagecolor = [-1,-1,-1];
                cagethick = 10;
                cagesize = [2/16, 2/16];
                predsize = 1/16;
                //predcoord = [Math.floor(randunif(7,9,1)[0]),Math.floor(randunif(7,9,1)[0])];
                thn_c = thn_c1;
                threatsize = [1/16,1/16];
                } else if (embody_cond==2) {
                condname = "post_encounter";
                iscage = 1;
                cagecolor = [-1,1,-1];
                cagethick = 10;
                cagesize = [2/16, 2/16];
                predsize = 1/16;
                //predcoord = [Math.floor(randunif(7,9,1)[0]),Math.floor(randunif(7,9,1)[0])];
                thn_c = thn_c2;
                threatsize = [1/16,1/16];
                } else if (embody_cond==3) {
                condname = "circa_strike";
                iscage = 0;
                cagecolor = [-1,-1,-1];
                cagethick = 0;
                cagesize = [0, 0];
                predsize = 1/16;
                //predcoord = [Math.floor(randunif(0,16,1)[0]),Math.floor(randunif(0,16,1)[0])];
                thn_c = thn_c3
                threatsize = [0,0];
                }
            }
    ImageComponent GRID_embody
      color = $[-1,-1,-1]
      image = GRID.png
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      texture resolution = 512
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    PolygonComponent threat_embody
      fillColor [set every repeat] = $threatcolor
      lineWidth = 0
      opacity = 0.3
      pos [set every repeat] = $threatpos
      shape = rectangle
      size [set every repeat] = (0,0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    PolygonComponent cage_embody
      fillColor = $[1,1,1]
      lineColor [set every repeat] = $cagecolor
      lineWidth [set every repeat] = $cagethick
      shape = rectangle
      size [set every repeat] = $cagesize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    PolygonComponent playerTIL_embody
      fillColor = $[-1,-1,1]
      pos [set every repeat] = $playerTILpos
      shape = triangle
      size = (1/16, 1/16)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    PolygonComponent predator_embody
      fillColor = $[1,-1,-1]
      nVertices = 100
      pos [set every repeat] = $predpos
      shape = regular polygon...
      size [set every repeat] = $predsize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    CodeComponent main_code_embody
      Code Type = JS
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      Begin JS Routine:
        if (isdummyStart) {
            predspawn = [[7,7],[7,8],[8,7],[8,8]];
            //// out of cage
            Nframe = 0;
            ud_mov = 0;
            rl_mov = 0;
            temppredcoord = predpos;
            cost0  = 0;
            costxy = 0;
            ucost = 0;
            dcost = 0;
            rcost = 0;
            lcost = 0;
            cost = [0,0,0,0];
            midx = 100;
            hold_flag = 0;
            rorl=0;
            playerTILspd = playerTILspd0;
            caught_flag = 0;

            predpos = [predcoord[0]*unit-0.5+unit/2, predcoord[1]*unit-0.5+unit/2];
            predator_embody.setPos(predpos);

            predspd = predspd_list[6];
            outlen = 0;
            prev_attack_time = 0;

            playerTILpos = [playerTILcoord[0]*unit-0.5+unit/2, playerTILcoord[1]*unit-0.5+unit/2];
            playerTIL_embody.setPos(playerTILpos);

            thmov_ind=0; // (each routine)
            threatcoord = [movpt[embody_cond][0][4*thn_c+thmov_ind],movpt[embody_cond][1][4*thn_c+thmov_ind]] //(every update of threat position)
            threatpos = [threatcoord[0]*unit-0.5+unit/2, threatcoord[1]*unit-0.5+unit/2];

            threat_embody.setPos(threatpos);

            attacktime = 16;

            playerTILx_t=[];
            playerTILy_t=[];
            predx_t=[];
            predy_t=[];
            threatpos_t=[];
            rewardpos_t=[];
            playerTILspd_t = [];
            predspd_t = [];

            trialtime = [];
            trialframe = [];
            }
      Each JS Frame:
        if (isdummyStart) {
            // Threat related code
            if ((Nframe%60)==30) {
                threat_embody.setSize([0,0]);
                } else if ((Nframe%60)==0) {
                    if (iscage==1) {
                        threat_embody.setSize(threatsize);
                        }
                    }

            if ((Nframe%2)==0) {
                playerTIL_embody.setPos(playerTILpos);
                predator_embody.setPos(predpos);
                threat_embody.setPos(threatpos);

                playerTILx_t.push(playerTILcoord[0]);
                playerTILy_t.push(playerTILcoord[1]);

                predx_t.push(predcoord[0]);
                predy_t.push(predcoord[1]);
                threatpos_t.push(threatcoord);

                playerTILspd_t.push(playerTILspd);
                predspd_t.push(predspd);
                trialtime.push(dummy_trial_embodyClock.getTime());
                trialframe.push(Nframe);

            if (((playerTILcoord[0]==predcoord[0])&&(playerTILcoord[1]==predcoord[1])) && (condition>0)) {
                caught_flag = 1;
                continueRoutine = false;
                }
            }

            ////////////////// Insert Keyboard Input Code ///////////////////////////////////
            keyboardJS.bind('up', (e) => {
                ud_mov = 1;
                rl_mov = 0;
            }, (e) => {
                ud_mov = 0;
            });
            keyboardJS.bind('down', (e) => {
                ud_mov = -1;
                rl_mov = 0;
            }, (e) => {
                ud_mov = 0;
            });
            keyboardJS.bind('right', (e) => {
                rl_mov = 1;
                ud_mov = 0;
            }, (e) => {
                rl_mov = 0;
            });
            keyboardJS.bind('left', (e) => {
                rl_mov = -1;
                ud_mov = 0;
            }, (e) => {
                rl_mov = 0;
            });
            keyboardJS.bind('up+down', (e) => {
                rl_mov = 0;
                ud_mov = 0;
            }, (e) => {
                rl_mov = 0;
                ud_mov = 0;
            });
            keyboardJS.bind('right+left', (e) => {
                rl_mov = 0;
                ud_mov = 0;
            }, (e) => {
                rl_mov = 0;
                ud_mov = 0;
            });

            if ((Nframe%playerTILspd)==(playerTILspd-1)) {
                playerTILcoord[1] += ud_mov;
                playerTILcoord[0] += rl_mov;
                if ((playerTILcoord[0] >15) || (playerTILcoord[0] <0) || (playerTILcoord[1] >15) || (playerTILcoord[1] <0)) {
                    playerTILcoord[1] -= ud_mov;
                    playerTILcoord[0] -= rl_mov;
                    }
                }
            playerTILpos = [playerTILcoord[0]*unit-0.5+unit/2, playerTILcoord[1]*unit-0.5+unit/2];

            if ((iscage === 1)) {
                if ((Nframe%(6*predspd))==(3*predspd-1)) {
                    rorl = Math.floor(Math.random()*2);
                    predcoord[0] = 7+Math.floor(Math.random()*2)*rorl;
                    predcoord[1] = 7+Math.floor(Math.random()*2)*rorl;
                    }
                } else if ((iscage === 0)) {
                    if ((Nframe%predspd)==(predspd-1)) {
                        temppredcoord = predcoord;
                        cost0 = sumArrayElements(temppredcoord,playerTILcoord.map(function(x) { return x * -1; }));
                        costxy = multifunc(Math.abs,sumArrayElements(cost0, [0, 1]));
                        ucost = costxy[0]+costxy[1];
                        costxy = multifunc(Math.abs,sumArrayElements(cost0, [0, -1]));
                        dcost = costxy[0]+costxy[1];
                        costxy = multifunc(Math.abs,sumArrayElements(cost0, [1, 0]));
                        rcost = costxy[0]+costxy[1];
                        costxy = multifunc(Math.abs,sumArrayElements(cost0, [-1, 0]));
                        lcost = costxy[0]+costxy[1];
                        cost = [ucost, dcost, rcost, lcost];
                        midx = findallind(cost,Math.min.apply(Math,cost));
                        if (midx.length>1) {
                            midx = midx[Math.round(Math.random())];
                            }
                        if ((midx == 0)) {
                            temppredcoord[1] += 1;
                            } else {
                                if ((midx == 1)) {
                                    temppredcoord[1] -= 1;
                                    } else {
                                        if ((midx == 2)) {
                                            temppredcoord[0] += 1;
                                            } else {
                                                if ((midx == 3)) {
                                                    temppredcoord[0] -= 1;
                                                    }
                                                }
                                            }
                                        predcoord = temppredcoord;
                                        }
                                    }
                                }
            predpos = [predcoord[0]*unit-0.5+unit/2, predcoord[1]*unit-0.5+unit/2];

            if ((Nframe%240)==239) {
                thmov_ind += 1;
                threatcoord = [movpt[embody_cond][0][4*thn_c+thmov_ind],movpt[embody_cond][1][4*thn_c+thmov_ind]] //(every update of threat position)
                threatpos = [threatcoord[0]*unit-0.5+unit/2, threatcoord[1]*unit-0.5+unit/2];
                }
            Nframe += 1;

            } else {
                continueRoutine = false;
                }
      End JS Routine:
        if (isdummyStart) {
            embody_count+=1;
            psychoJS.experiment.addData('embody_trialnum',tn);
            psychoJS.experiment.addData('embody_condition',embody_cond);
            psychoJS.experiment.addData('embody_playerTILx',playerTILx_t);
            psychoJS.experiment.addData('embody_playerTILy',playerTILy_t);
            psychoJS.experiment.addData('embody_predx',predx_t);
            psychoJS.experiment.addData('embody_predy',predy_t);
            psychoJS.experiment.addData('embody_threatpos',threatpos_t);
            psychoJS.experiment.addData('embody_playerTILspd',playerTILspd_t );
            psychoJS.experiment.addData('embody_predspd',predspd_t);
            psychoJS.experiment.addData('embody_caught',caught);
            psychoJS.experiment.addData('embody_caught_flag',caught_flag);
            psychoJS.experiment.addData('embody_threat_get',get_threat);
            psychoJS.experiment.addData('embody_attacktime',attacktime);
            psychoJS.experiment.addData('embody_trialtime',trialtime);
            psychoJS.experiment.addData('embody_trialframe',trialframe);


            if (embody_cond>1) {
                if (caught_flag==1) {
                    playerTILcoord=spawn[spawnseq[caught]];
                    }
                predcoord=predspawn[predspawnseq[spawnnum]];
                }
            }

        predpos = [predcoord[0]*unit-0.5+unit/2, predcoord[1]*unit-0.5+unit/2];
        playerTILpos = [playerTILcoord[0]*unit-0.5+unit/2, playerTILcoord[1]*unit-0.5+unit/2];


        psychoJS.eventManager.clearEvents();
        psychoJS.eventManager.clearKeys();
        keyboardJS.reset();
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  Routine embody_q_example
    CodeComponent code_2
      Code Type = JS
      Begin JS Routine:
        mousenum = 0;
        continueRoutine = false;
      Each JS Frame:
        continueRoutine = false;
        if (tn_example==1) {
            continueRoutine = true;
           }
      End JS Routine:
        for (i=0;i<npoints;i++) {
            cx[i].setAutoDraw(false);
            }
    ImageComponent body_image_2
      image = base.png
      size = (1,1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_body_2
      clickable = reset_rect_2
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_body_2
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent lt_text_body_2
      color = black
      letterHeight = 0.025
      pos = (-0.33, -0.45)
      startVal [time (s)] = 0.0
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      text:
        for this body, color the regions
        whose activity you feel
        increasing or getting stronger
    TextComponent rt_text_body_2
      color = black
      letterHeight = 0.025
      pos = (+0.33, -0.45)
      startVal [time (s)] = 0.0
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      text:
        for this body, color the regions
        whose activity you feel
        decreasing or getting weaker
    TextComponent body_explanation_2
      color = black
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Use the pictures to indicate
        the bodily sensations
        you feel now
    TextComponent body_progress_2
      color = black
      letterHeight = 0.02
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Press 'Enter' to go to the next page
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    PolygonComponent reset_rect_2
      fillColor = $[1,1,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      pos = (0, -0.4)
      shape = rectangle
      size = (0.1, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent reset_text_2
      color = black
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = RESET
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  Routine Question_Anx_Example
    CodeComponent Question_Code_3
      Code Type = JS
      Begin JS Experiment:
        isQStart = false;
        RatingEndCount=0;
      Begin JS Routine:
        if (tn_example==0) {
            isQStart = true;
            } else {
                isQStart = false;
               }
        if (isQStart) {
            RatingEndCount=0;
            }
      Each JS Frame:
        // Check Confidence_rating for response to end routine
        if ((anxiety_rating_3.getRating() !== undefined) && (anxiety_rating_3.status === PsychoJS.Status.STARTED)) {
            RatingEndCount+=1;
            if (RatingEndCount>20) {
              continueRoutine = false;
              }
          }
        if (!isQStart) {
            continueRoutine = false;
            }
    SliderComponent anxiety_rating_3
      color = white
      forceEndRoutine = False
      granularity = 0
      labels = '1','2','3','4','5','6','7'
      pos = (0, -0.3)
      size = (1.0, 0.05)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 10
      styles = ['rating', 'triangleMarker']
      ticks = (1, 2, 3, 4, 5,6,7)
      units = norm
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    TextComponent rt_text_anx_2
      letterHeight = 0.03
      pos = (0.45, -0.22)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 10
      text = highly anxious
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    TextComponent lt_text_anx_2
      letterHeight = 0.03
      pos = (-0.45, -0.22)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 10
      text = no sense of anxiety
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    TextComponent Question_Name_3
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 10
      text = How anxious are you now?
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    TextComponent MouseClick_3
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 10
      text = Click on the scale to rate the score
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    CodeComponent cage_code_Q_2
      Code Type = JS
      Begin JS Routine:
        if (condition==0) {
            condname = "safe";
            iscage = 1;
            cagecolor = [-1,-1,-1];
            cagethick = 10;
            cagesize = [2/16, 2/16];
            predsize = 0;
            } else if (condition==1) {
            condname = "pre_encounter";
            iscage = 1;
            cagecolor = [-1,-1,-1];
            cagethick = 10;
            cagesize = [2/16, 2/16];
            predsize = 1/16;
            } else if (condition==2) {
            condname = "post_encounter";
            iscage = 1;
            cagecolor = [-1,1,-1];
            cagethick = 10;
            cagesize = [2/16, 2/16];
            predsize = 1/16;
            } else if (condition==3) {
            condname = "circa_strike";
            iscage = 0;
            cagecolor = [-1,-1,-1];
            cagethick = 0;
            cagesize = [0, 0];
            predsize = 1/16;
            }
    ImageComponent GRID_Q_2
      color = $[-1,-1,-1]
      image = GRID.png
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      texture resolution = 512
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    PolygonComponent cage_Q_2
      fillColor = $[1,1,1]
      lineColor [set every repeat] = $cagecolor
      lineWidth [set every repeat] = $cagethick
      shape = rectangle
      size [set every repeat] = $cagesize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent playerTIL_Q_2
      fillColor = $[-1,-1,1]
      pos [set every repeat] = $playerTILpos
      shape = triangle
      size = (1/16, 1/16)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent predator_Q_2
      fillColor = $[1,-1,-1]
      nVertices = 100
      pos [set every repeat] = $predpos
      shape = regular polygon...
      size [set every repeat] = $predsize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent inform_next_2
      color = black
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Next trial is:
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    CodeComponent main_code_Q_2
      Code Type = JS
      Begin JS Routine:
        predpos = [predcoord[0]*unit-0.5+unit/2, predcoord[1]*unit-0.5+unit/2];
        predator_Q_2.setPos(predpos);

        playerTILpos = [playerTILcoord[0]*unit-0.5+unit/2, playerTILcoord[1]*unit-0.5+unit/2];
        playerTIL_Q_2.setPos(playerTILpos);
  Routine embody_q_postexp
    CodeComponent code_3
      Code Type = JS
      Begin JS Routine:
        mousenum = 0;
      End JS Routine:
        for (i=0;i<npoints;i++) {
            cx[i].setAutoDraw(false);
            }
    ImageComponent body_image_3
      image = base.png
      size = (1,1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_body_3
      clickable = reset_rect_3
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_body_3
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent lt_text_body_3
      color = black
      letterHeight = 0.025
      pos = (-0.33, -0.45)
      startVal [time (s)] = 0.0
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      text:
        for this body, color the regions
        whose activity you feel
        increasing or getting stronger
    TextComponent rt_text_body_3
      color = black
      letterHeight = 0.025
      pos = (+0.33, -0.45)
      startVal [time (s)] = 0.0
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      text:
        for this body, color the regions
        whose activity you feel
        decreasing or getting weaker
    TextComponent body_explanation_3
      color = black
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Use the pictures to
        indicate the bodily sensations
        you experience when you feel:
    TextComponent body_progress_3
      color = black
      letterHeight = 0.02
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = Press 'Enter' to go to the next page
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    PolygonComponent reset_rect_3
      fillColor = $[1,1,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      pos = (0, -0.4)
      shape = rectangle
      size = (0.1, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent reset_text_3
      color = black
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = RESET
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    TextComponent feeling_words
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $feel_word
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  Routine embody_postexp_Explanation
    TextComponent embody_postexp_instruction
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Survey 1.
        We will ask you about your bodily sensation when you feel specific emotions.
        Use the pictures to indicate the bodily sensations you feel when you feel that emotion.
        Press ‘Enter’ key to move to the next question
    KeyboardComponent embody_postexp_Start_Enter
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Question_Anx
    CodeComponent Question_Code
      Code Type = JS
      Begin JS Experiment:
        isQStart = false;
        RatingEndCount=0;
      Begin JS Routine:
        if (q_trial.includes(tn)) {
            isQStart = true;
            } else {
                isQStart = false;
               }
        if (isQStart) {
            RatingEndCount=0;
            }
      Each JS Frame:
        // Check Confidence_rating for response to end routine
        if (anxiety_rating.getRating() !== undefined && anxiety_rating.status === PsychoJS.Status.STARTED) {
            RatingEndCount+=1;
            if (RatingEndCount>20) {
              continueRoutine = false;
              }
          }
        if (!isQStart) {
            continueRoutine = false;
            }
      End JS Routine:
        psychoJS.experiment.addData('Question',isQStart);
        isQStart = false;
    TextComponent rt_text_anx
      letterHeight = 0.03
      pos = (0.45, -0.22)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 10
      text = highly anxious
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    TextComponent lt_text_anx
      letterHeight = 0.03
      pos = (-0.45, -0.22)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 10
      text = no sense of anxiety
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    SliderComponent anxiety_rating
      color = white
      forceEndRoutine = False
      granularity = 0
      labels = '1','2','3','4','5','6','7'
      pos = (0, -0.3)
      size = (1.0, 0.05)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 10
      styles = ['rating', 'triangleMarker']
      ticks = (1, 2, 3, 4, 5,6,7)
      units = norm
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    TextComponent Question_Name
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 10
      text = How anxious are you now?
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    TextComponent MouseClick
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 10
      text = Click on the scale to rate the score
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    CodeComponent cage_code_Q
      Code Type = JS
      Begin JS Routine:
        if (condition==0) {
            condname = "safe";
            iscage = 1;
            cagecolor = [-1,-1,-1];
            cagethick = 10;
            cagesize = [2/16, 2/16];
            predsize = 0;
            //predcoord = [100,100];
            thn_c = thn_c0;
            threatsize = [1/16,1/16];
            } else if (condition==1) {
            condname = "pre_encounter";
            iscage = 1;
            cagecolor = [-1,-1,-1];
            cagethick = 10;
            cagesize = [2/16, 2/16];
            predsize = 1/16;
            //predcoord = [Math.floor(randunif(7,9,1)[0]),Math.floor(randunif(7,9,1)[0])];
            thn_c = thn_c1;
            threatsize = [1/16,1/16];
            } else if (condition==2) {
            condname = "post_encounter";
            iscage = 1;
            cagecolor = [-1,1,-1];
            cagethick = 10;
            cagesize = [2/16, 2/16];
            predsize = 1/16;
            //predcoord = [Math.floor(randunif(7,9,1)[0]),Math.floor(randunif(7,9,1)[0])];
            thn_c = thn_c2;
            threatsize = [0,0];
            } else if (condition==3) {
            condname = "circa_strike";
            iscage = 0;
            cagecolor = [-1,-1,-1];
            cagethick = 0;
            cagesize = [0, 0];
            predsize = 1/16;
            //predcoord = [Math.floor(randunif(0,16,1)[0]),Math.floor(randunif(0,16,1)[0])];
            thn_c = thn_c3
            threatsize = [1/16,1/16];
            }
    ImageComponent GRID_Q
      color = $[-1,-1,-1]
      image = GRID.png
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      texture resolution = 512
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    PolygonComponent cage_Q
      fillColor = $[1,1,1]
      lineColor [set every repeat] = $cagecolor
      lineWidth [set every repeat] = $cagethick
      shape = rectangle
      size [set every repeat] = $cagesize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent playerTIL_Q
      fillColor = $[-1,-1,1]
      pos [set every repeat] = $playerTILpos
      shape = triangle
      size = (1/16, 1/16)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent predator_Q
      fillColor = $[1,-1,-1]
      nVertices = 100
      pos [set every repeat] = $predpos
      shape = regular polygon...
      size [set every repeat] = $predsize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent inform_next
      color = black
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Next trial is:
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    CodeComponent main_code_q
      Code Type = JS
      Begin JS Routine:
        predpos = [predcoord[0]*unit-0.5+unit/2, predcoord[1]*unit-0.5+unit/2];
        predator_Q.setPos(predpos);

        playerTILpos = [playerTILcoord[0]*unit-0.5+unit/2, playerTILcoord[1]*unit-0.5+unit/2];
        playerTIL_Q.setPos(playerTILpos);

        tlen = tlen_seq[tn];
  Routine DASS21_Routine
    PolygonComponent Line_DASS21
      fillColor = $[1,1,1]
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = norm
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    SliderComponent DASS21_slider
      forceEndRoutine = False
      granularity = 1
      labels = 'Does not apply to me at all','Applies to me to some degree, \n or some of the time','Applies to me to a considerable degree,\n or a good part of the time','Applies to me very much,\n or most of the time'
      size = (1.0, 0.04)
      startVal [time (s)] = 0.0
      styles = ['rating', 'radio']
      ticks = (1, 2, 3, 4)
      units = norm
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    TextComponent DASS21_Question_Text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Question_DASS21
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    CodeComponent DASS21_code
      Code Type = JS
      Begin JS Experiment:
         RatingEndCount = 0;
      Begin JS Routine:
         RatingEndCount = 0;
      Each JS Frame:
         if (DASS21_slider.getRating() !== undefined &&DASS21_slider.status === PsychoJS.Status.STARTED) {
            RatingEndCount+=1;
           if (RatingEndCount>20) {
              continueRoutine = false;
              }
              }
  Routine DASS21_Instruction
    TextComponent DASS21_inst_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Survey 7.
        Please read each statement and click a number 0, 1, 2 or 3 that indicates how much the statement applies to you in general. There are no right or wrong answers. Do not spend too much time on any statement.

        Use mouse click to check the answer.
        To start the survey, please press ‘Enter’ key.
    KeyboardComponent DASS21_inst_enter
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine BPQ_Routine
    PolygonComponent Line_BPQ
      fillColor = $[1,1,1]
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = norm
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    SliderComponent BPQ_slider
      forceEndRoutine = False
      granularity = 1
      labels = 'Never','Occasionally','Sometimes','Usually','Always'
      size = (1.0, 0.04)
      startVal [time (s)] = 0.0
      styles = ['rating', 'radio']
      ticks = (1, 2, 3, 4, 5)
      units = norm
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    TextComponent BPQ_Question_Text
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Question_BPQ
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    CodeComponent BPQ_code
      Code Type = JS
      Begin JS Experiment:
         RatingEndCount = 0;
      Begin JS Routine:
         RatingEndCount = 0;
      Each JS Frame:
         if (BPQ_slider.getRating() !== undefined &&BPQ_slider.status === PsychoJS.Status.STARTED) {
            RatingEndCount+=1;
           if (RatingEndCount>20) {
              continueRoutine = false;
              }
              }
    TextComponent BPQ_text2
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = During most situations I am aware of:
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    TextComponent MouseClick_9
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Click on the scale to rate the score
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  Routine BPQ_instruction
    TextComponent BPQ_inst_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Survey 6.
        Please rate your awareness on each of the characteristics described below. Select the answer that most accurately describes you.

        Use mouse click to check the answer.
        To start the survey, please press ‘Enter’ key.
    KeyboardComponent BPQ_inst_enter
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine MAIA_Routine
    PolygonComponent Line_MAIA
      fillColor = $[1,1,1]
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = norm
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    SliderComponent MAIA_slider
      forceEndRoutine = False
      granularity = 1
      labels = 'Never','','','','','Always'
      size = (1.0, 0.04)
      startVal [time (s)] = 0.0
      styles = ['rating', 'radio']
      ticks = (0, 1, 2, 3, 4, 5)
      units = norm
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    TextComponent MAIA_Question_Text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Question_MAIA
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    CodeComponent MAIA_code
      Code Type = JS
      Begin JS Experiment:
         RatingEndCount = 0;
      Begin JS Routine:
         RatingEndCount = 0;
      Each JS Frame:
         if (MAIA_slider.getRating() !== undefined &&MAIA_slider.status === PsychoJS.Status.STARTED) {
            RatingEndCount+=1;
           if (RatingEndCount>20) {
              continueRoutine = false;
              }
              }
    TextComponent MouseClick_8
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Click on the scale to rate the score
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  Routine MAIA_Instruction
    TextComponent MAIA_inst_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Survey 8.
        Below you will find a list of statements. Please indicate how often each statement applies to you generally in daily life.

        Use mouse click to check the answer.
        To start the survey, please press ‘Enter’ key.
    KeyboardComponent MAIA_inst_enter
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine IRB_Consent
  Routine Consent
  Routine Introduction
  Routine Instruction_Final_Page
  LoopInitiator example_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    Routine start_example
    Routine Question_Anx_Example
    Routine trial_example
    Routine embody_q_example
  LoopTerminator example_loop
  Routine Start_Main
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = Ntrial
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    Routine dummy_trial_embody
    Routine embody_q
    Routine Question_Anx
    Routine trial
  LoopTerminator trials
  Routine EndExp
  Routine embody_postexp_Explanation
  LoopInitiator embody_postexp_loop loopType="TrialHandler"
    conditionsFile = feel_word_list.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('feel_word', 'Anger')]),
      OrderedDict([('feel_word', 'Anxiety')]),
      OrderedDict([('feel_word', 'Fear')]),
      OrderedDict([('feel_word', 'Happiness')]),
      OrderedDict([('feel_word', 'Depression')]),
      OrderedDict([('feel_word', 'Safe')]),
      OrderedDict([('feel_word', 'Sadness')]),
      OrderedDict([('feel_word', 'Panic')]),
      OrderedDict([('feel_word', 'Surprise')]),
      OrderedDict([('feel_word', 'Shame')]),
      OrderedDict([('feel_word', 'Neutral')])]
    Routine embody_q_postexp
  LoopTerminator embody_postexp_loop
  Routine DemoQ_Explanation
  LoopInitiator DemoQLoop loopType="TrialHandler"
    conditionsFile = DemoQuestions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('DemoQ', 'Please enter your Prolific ID')]),
      OrderedDict([('DemoQ', 'Handedness\n(1 - Right / 2 - Left)')]),
      OrderedDict([('DemoQ', 'Height\n(please specify unit - e.g., 175cm)')]),
      OrderedDict([('DemoQ', 'Weight \n(please specify unit - e.g., 70kg)')]),
      OrderedDict([('DemoQ', 'Race/Ethnicity \n1 - African American \n2 - Caucasian\n3 - Hispanic\n4 - Asian\nOther (please specify)')]),
      OrderedDict([('DemoQ', 'Do you have children? \n(1 - Yes / 2 - No)')]),
      OrderedDict([('DemoQ', 'Have you ever been diagnosed with an anxiety disorder (e.g. Generalized Anxiety  Disorder, Panic Disorder)  \n(1 - Yes / 2 - No)')]),
      OrderedDict([('DemoQ', 'Are you currently on anti-anxiety medication or anti-depressants? \n(1 - Yes / 2 - No)')]),
      OrderedDict([('DemoQ', 'Have you ever had a panic attack?  \n(1 - Yes / 2 - No)')]),
      OrderedDict([('DemoQ', 'Please rate how dangerous an environment you are currently living:\n1 - no crime \n2 - low crime \n3 - medium crime \n4 -  high crime')]),
      OrderedDict([('DemoQ', 'Have you PERSONALLY experienced violent crime?\n1 - never \n2 - once \n3 - more than once \n4 - many time')]),
      OrderedDict([('DemoQ', 'Imagine that somebody broke into your house\nIn that situation, you would call the police and\n1 - Attack that person\n2 - Scream\n3 - Hide\n4 - Freeze')]),
      OrderedDict([('DemoQ', 'Imagine that someone yells at you and verbally attacks you unreasonably.\nIn that case, you would\n1 - Fight with that person\n2 - Freeze\n3 - Immediately escape from that situation')])]
    Routine DemoQRoutime
  LoopTerminator DemoQLoop
  Routine STAI_Instruction
  LoopInitiator STAILoop loopType="TrialHandler"
    conditionsFile = STAIT.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Question_STAIT', 'I feel pleasant')]),
      OrderedDict([('Question_STAIT', 'I feel nervous and restless')]),
      OrderedDict([('Question_STAIT', 'I feel satisfied with myself')]),
      OrderedDict([('Question_STAIT', 'I wish I could be as happy as others seem to be')]),
      OrderedDict([('Question_STAIT', 'I feel like a failure')]),
      OrderedDict([('Question_STAIT', 'I feel rested')]),
      OrderedDict([('Question_STAIT', 'I am “calm, cool, and collected”')]),
      OrderedDict([('Question_STAIT', 'I feel that difficulties are piling up so that I cannot overcome them')]),
      OrderedDict([('Question_STAIT', 'I worry too much over something that really doesn’t matter')]),
      OrderedDict([('Question_STAIT', 'I am happy')]),
      OrderedDict([('Question_STAIT', 'I have disturbing thoughts')]),
      OrderedDict([('Question_STAIT', 'I lack self-confidence')]),
      OrderedDict([('Question_STAIT', 'I feel secure')]),
      OrderedDict([('Question_STAIT', 'I make decisions easily')]),
      OrderedDict([('Question_STAIT', 'I feel inadequate')]),
      OrderedDict([('Question_STAIT', 'I am content')]),
      OrderedDict([('Question_STAIT', 'Some unimportant thought runs through my mind and bothers me')]),
      OrderedDict([('Question_STAIT', 'I take disappointments so keenly that I can’t put them out of my mind')]),
      OrderedDict([('Question_STAIT', 'I am a steady person')]),
      OrderedDict([('Question_STAIT', 'I get in a state of tension or turmoil as I think over my recent concerns and interest')])]
    Routine STAI_Routine
  LoopTerminator STAILoop
  Routine BISBAS_Instruction
  LoopInitiator BISBASLoop loopType="TrialHandler"
    conditionsFile = BisBasQ.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Question_bisbas', 'Even if something bad is about to happen to me, I rarely experience fear or nervousness.')]),
      OrderedDict([('Question_bisbas', 'I go out of my way to get things I want.')]),
      OrderedDict([('Question_bisbas', 'When I am doing well at something, I love to keep at it.')]),
      OrderedDict([('Question_bisbas', 'I am always willing to try something new if I think it will be fun.')]),
      OrderedDict([('Question_bisbas', 'When I get something I want, I feel excited and energized.')]),
      OrderedDict([('Question_bisbas', 'Criticism or scolding hurts me quite a bit.')]),
      OrderedDict([('Question_bisbas', 'When I want something, I usually go all-out to get it.')]),
      OrderedDict([('Question_bisbas', 'I will often do things for no other reason than that they might be fun.')]),
      OrderedDict([('Question_bisbas', 'If I see a chance to get something I want, I move on it right away.')]),
      OrderedDict([('Question_bisbas', 'I feel pretty worried or upset when I think or know somebody is angry at me.')]),
      OrderedDict([('Question_bisbas', 'When I see an opportunity for something I like, I get excited right away.')]),
      OrderedDict([('Question_bisbas', 'I often act on the spur of the moment.')]),
      OrderedDict([('Question_bisbas', 'If I think something unpleasant is going to happen, I usually get pretty “worked up.”')]),
      OrderedDict([('Question_bisbas', 'When good things happen to me, it affects me strongly.')])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
    Routine BISBAS_Routine
  LoopTerminator BISBASLoop
  Routine STICSA_Instruction
  LoopInitiator STICSA_Loop loopType="TrialHandler"
    conditionsFile = STICSA.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Question_STICSA', 'My heart beats fast')]),
      OrderedDict([('Question_STICSA', 'My muscles are tense')]),
      OrderedDict([('Question_STICSA', 'I feel agonized over my problems')]),
      OrderedDict([('Question_STICSA', 'I think that others won’t approve of me')]),
      OrderedDict([('Question_STICSA', 'I feel like I’m missing out on things because I can’t make up my mind soon enough')]),
      OrderedDict([('Question_STICSA', 'I feel dizzy')]),
      OrderedDict([('Question_STICSA', 'My muscles feel weak')]),
      OrderedDict([('Question_STICSA', 'I feel trembly and shaky')]),
      OrderedDict([('Question_STICSA', 'I picture some future misfortune')]),
      OrderedDict([('Question_STICSA', 'I can’t get some thought out of my mind')]),
      OrderedDict([('Question_STICSA', 'I have trouble remembering things')]),
      OrderedDict([('Question_STICSA', 'My face feels hot')]),
      OrderedDict([('Question_STICSA', 'I think that the worst will happen')]),
      OrderedDict([('Question_STICSA', 'My arms and legs feel stiff')]),
      OrderedDict([('Question_STICSA', 'My throat feels dry')]),
      OrderedDict([('Question_STICSA', 'I keep busy to avoid uncomfortable thoughts')]),
      OrderedDict([('Question_STICSA', 'I cannot concentrate without irrelevant thoughts intruding')]),
      OrderedDict([('Question_STICSA', 'My breathing is fast and shallow')]),
      OrderedDict([('Question_STICSA', 'I worry that I cannot control my thoughts as well as I would like to')]),
      OrderedDict([('Question_STICSA', 'I have butterflies in the stomach')])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
    Routine STICSA_Routine
  LoopTerminator STICSA_Loop
  Routine BPQ_instruction
  LoopInitiator BPQ_Loop loopType="TrialHandler"
    conditionsFile = BPQ.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Question_BPQ', 'My mouth being dry')]),
      OrderedDict([('Question_BPQ', 'How fast I am breathing')]),
      OrderedDict([('Question_BPQ', 'A swelling of my body or parts of my body')]),
      OrderedDict([('Question_BPQ', 'Muscle tension in my arms and legs')]),
      OrderedDict([('Question_BPQ', 'A bloated feeling because of water retention')]),
      OrderedDict([('Question_BPQ', 'Goose bumps')]),
      OrderedDict([('Question_BPQ', 'Stomach and gut pains')]),
      OrderedDict([('Question_BPQ', 'Stomach distension or bloatedness')]),
      OrderedDict([('Question_BPQ', 'Tremor in my lips')]),
      OrderedDict([('Question_BPQ', 'The hair on the back of my neck "standing up"')]),
      OrderedDict([('Question_BPQ', 'An urge to swallow')]),
      OrderedDict([('Question_BPQ', 'How hard my heart is beating')])]
    Routine BPQ_Routine
  LoopTerminator BPQ_Loop
  Routine DASS21_Instruction
  LoopInitiator DASS21_Loop loopType="TrialHandler"
    conditionsFile = DASS21.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Question_DASS21', 'I find it hard to wind down.')]),
      OrderedDict([('Question_DASS21', 'I am aware of dryness of my mouth.')]),
      OrderedDict([('Question_DASS21', 'I can’t seem to experience any positive feeling at all.')]),
      OrderedDict([('Question_DASS21', 'I experience breathing difficulty (e.g., excessively rapid breathing, breathlessness in the absence of physical exertion).')]),
      OrderedDict([('Question_DASS21', 'I find it difficult to work up the initiative to do things.')]),
      OrderedDict([('Question_DASS21', 'I tend to over-react to situations.')]),
      OrderedDict([('Question_DASS21', 'I experience trembling (e.g., in the hands).')]),
      OrderedDict([('Question_DASS21', 'I feel that I use a lot of nervous energy.')]),
      OrderedDict([('Question_DASS21', 'I am worried about situations in which I might panic and make a fool of myself.')]),
      OrderedDict([('Question_DASS21', 'I feel that I have nothing to look forward to.')]),
      OrderedDict([('Question_DASS21', 'I find myself getting agitated.')]),
      OrderedDict([('Question_DASS21', 'I find it difficult to relax.')]),
      OrderedDict([('Question_DASS21', 'I feel down-hearted and blue.')]),
      OrderedDict([('Question_DASS21', 'I am intolerant of anything that keeps me from getting on with what I am doing.')]),
      OrderedDict([('Question_DASS21', 'I feel I am close to panic.')]),
      OrderedDict([('Question_DASS21', 'I am unable to become enthusiastic about anything.')]),
      OrderedDict([('Question_DASS21', 'I feel I am not worth much as a person.')])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
    Routine DASS21_Routine
  LoopTerminator DASS21_Loop
  Routine MAIA_Instruction
  LoopInitiator MAIA_Loop loopType="TrialHandler"
    conditionsFile = MAIA.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Question_MAIA', 'When I am tense I notice where the tension is located in my body.')]),
      OrderedDict([('Question_MAIA', 'I notice when I am uncomfortable in my body.')]),
      OrderedDict([('Question_MAIA', 'I notice where in my body I am comfortable.')]),
      OrderedDict([('Question_MAIA', 'I notice changes in my breathing, such as whether it slows down or speeds up.')]),
      OrderedDict([('Question_MAIA', 'I ignore physical tension or discomfort until they become more severe.')]),
      OrderedDict([('Question_MAIA', 'I distract myself from sensations of discomfort.')]),
      OrderedDict([('Question_MAIA', 'When I feel pain or discomfort, I try to power through it.')]),
      OrderedDict([('Question_MAIA', 'I try to ignore pain.')]),
      OrderedDict([('Question_MAIA', 'I push feelings of discomfort away by focusing on something.')]),
      OrderedDict([('Question_MAIA', 'When I feel unpleasant body sensations, I occupy myself with something else so I don’t have to feel them.')]),
      OrderedDict([('Question_MAIA', 'When I feel physical pain, I become upset.')]),
      OrderedDict([('Question_MAIA', 'I start to worry that something is wrong if I feel any discomfort.')]),
      OrderedDict([('Question_MAIA', 'I can notice an unpleasant body sensation without worrying about it.')]),
      OrderedDict([('Question_MAIA', 'I can stay calm and not worry when I have feelings of discomfort or pain.')]),
      OrderedDict([('Question_MAIA', 'When I am in discomfort or pain I can’t get it out of my mind.')])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
    Routine MAIA_Routine
  LoopTerminator MAIA_Loop
  Routine FinalScreen
