PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = anxq_test
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Routines
  Routine trial
    SliderComponent anxiety_rating
      color = white
      forceEndRoutine = False
      granularity = 0
      labels = '1','2','3','4','5','6','7'
      pos = (0, -0.3)
      size = (1.0, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      styles = ['rating', 'triangleMarker']
      ticks = (1, 2, 3, 4, 5,6,7)
      units = norm
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    TextComponent lt_text_anx
      letterHeight = 0.03
      pos = (-0.45, -0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = no sense of anxiety
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    TextComponent rt_text_anx
      letterHeight = 0.03
      pos = (0.45, -0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = highly anxious
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    TextComponent Question_Name
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text = How anxious are you now?
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    TextComponent MouseClick
      letterHeight = 0.02
      pos = (0, -0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text = Click on the scale to rate the score
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  Routine DASS21_Routine
    PolygonComponent Line_DASS21
      fillColor = $[1,1,1]
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = norm
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    SliderComponent DASS21_slider
      forceEndRoutine = False
      granularity = 1
      labels = 'Never','','','','','Always'
      size = (1.0, 0.04)
      startVal [time (s)] = 0.0
      styles = ('rating', 'radio')
      ticks = (0,1, 2, 3, 4,5)
      units = norm
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    TextComponent DASS21_Question_Text
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Question_DASS21
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    CodeComponent DASS21_code
      Code Type = JS
      Begin JS Experiment:
         RatingEndCount = 0;
      Begin JS Routine:
         RatingEndCount = 0;
      Each JS Frame:
         if (DASS21_slider.getRating() !== undefined &&DASS21_slider.status === PsychoJS.Status.STARTED) {
            RatingEndCount+=1;
           if (RatingEndCount>20) {
              continueRoutine = false;
              }
              }
    TextComponent text
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = During most situations I am aware of:
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = DASS21.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Question_DASS21', 'I find it hard to wind down.')]),
      OrderedDict([('Question_DASS21', 'I am aware of dryness of my mouth.')]),
      OrderedDict([('Question_DASS21', 'I can’t seem to experience any positive feeling at all.')]),
      OrderedDict([('Question_DASS21', 'I experience breathing difficulty (e.g., excessively rapid breathing, breathlessness in the absence of physical exertion).')]),
      OrderedDict([('Question_DASS21', 'I find it difficult to work up the initiative to do things.')]),
      OrderedDict([('Question_DASS21', 'I tend to over-react to situations.')]),
      OrderedDict([('Question_DASS21', 'I experience trembling (e.g., in the hands).')]),
      OrderedDict([('Question_DASS21', 'I feel that I use a lot of nervous energy.')]),
      OrderedDict([('Question_DASS21', 'I am worried about situations in which I might panic and make a fool of myself.')]),
      OrderedDict([('Question_DASS21', 'I feel that I have nothing to look forward to.')]),
      OrderedDict([('Question_DASS21', 'I find myself getting agitated.')]),
      OrderedDict([('Question_DASS21', 'I find it difficult to relax.')]),
      OrderedDict([('Question_DASS21', 'I feel down-hearted and blue.')]),
      OrderedDict([('Question_DASS21', 'I am intolerant of anything that keeps me from getting on with what I am doing.')]),
      OrderedDict([('Question_DASS21', 'I feel I am close to panic.')]),
      OrderedDict([('Question_DASS21', 'I am unable to become enthusiastic about anything.')]),
      OrderedDict([('Question_DASS21', 'I feel I am not worth much as a person.')])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
    Routine DASS21_Routine
  LoopTerminator trials
  Routine trial
