PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Lee test
  keyboardBackend = ioHub
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Routines
  Routine Intro1
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    ImageComponent Intro_1
      image = Images/Intro_1.jpg
      size = (1, 1)
      startVal [time (s)] = 0
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = nothing
      syncScreenRefresh = False
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  Routine Intro2
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    ImageComponent Intro_2
      image = Images/Intro_2.jpg
      size = (1, 1)
      startVal [time (s)] = 0
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = nothing
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  Routine Intro3
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    ImageComponent Intro_3
      image = Images/Intro_3.jpg
      size = (1, 1)
      startVal [time (s)] = 0
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space', 'enter'
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = nothing
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  Routine Scenarios
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    TextComponent Scenario
      letterHeight = 0.05
      startVal [time (s)] = 0
      text [set every repeat] = $ScenarioText
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    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine Mapping
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    ImageComponent target
      image = Images/base.png
      size = (1, 1)
      startVal [time (s)] = 0
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        from time import strftime
        from psychopy import visual, event, core
      Begin Experiment:
        max_clicks = 500  # Adjust this number based on your experiment's needs
        clickList = []
        shapes = [visual.ShapeStim(win, vertices='circle', size=(0.01, 0.01), fillColor='white', autoDraw=False) for _ in range(max_clicks)]
      Each Frame:
        # Checks for mouse presses and colors shapes
        buttons = mouse.getPressed()
        x, y = mouse.getPos()

        if buttons[0]:  # Left-click
            for shape in shapes:
                if not shape.autoDraw:
                    shape.pos = (x, y)
                    shape.fillColor = 'red'  # Set the color for left-click
                    shape.autoDraw = True
                    break  # Exit the loop after updating one shape
        elif buttons[2]:  # Right-click
            for shape in shapes:
                if not shape.autoDraw:
                    shape.pos = (x, y)
                    shape.fillColor = 'blue'  # Set the color for right-click
                    shape.autoDraw = True
                    break

        # Listen for a specific key press to clear colored shapes
        keys = event.getKeys(keyList=['space', 'return'])

        if 'return' in keys:
            thisExp.addData('screenshotTime', globalClock.getTime())
            win.getMovieFrame()
            filename = "screenshot_" + strftime("%Y%m%d_%H%M%S") + ".png"
            win.saveMovieFrames(filename)

        if 'space' in keys:
            for shape in shapes:
                shape.fillColor = None
                shape.autoDraw = False
            win.flip()
      End Routine:
        if 'return' in keys:  # Replace 'return' with the actual key used to end coloring
            thisExp.addData('screenshotTime', globalClock.getTime())  # Optional: Record the time of the screenshot
            win.getMovieFrame()  # Capture the screen
            filename = "screenshot_" + strftime("%Y%m%d_%H%M%S") + ".png"
            win.saveMovieFrames(filename)  # Save the screenshot
        if keys:
            # If 'space' is pressed, clear all shapes by setting fillColor to None
            for shape in shapes:
                shape.fillColor = None
                shape.autoDraw = False  # Stop drawing the shape
            win.flip()
    MouseComponent mouse
      clickable = target
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    KeyboardComponent key_resp_body
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent feeling_words
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      text [set every repeat] = $feel_word
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Flow
  Routine Intro1
  Routine Intro2
  Routine Intro3
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = feel_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'feel_word': 'Startled by library footsteps…', 'ScenarioText': 'You are studying late in a nearly empty library. Suddenly, you hear footsteps that seem to stop right behind your chair. The eerie silence of the library, combined with the unexpected sound, fills you with a deep sense of fear.'},
      {'feel_word': 'Wrongly accused by teacher…', 'ScenarioText': "In your final year, a misunderstanding arises when a teacher, wrongly accuses you of an action you didn't commit. Despite it being a clear mix-up, the situation escalates, leaving you unsure of how to clear your name without provoking further aggression. This concern for potential confrontation and the need to defend your integrity weigh heavily, impacting your sense of security and trust within the academic environment."},
      {'feel_word': 'Doubting before major deadline…', 'ScenarioText': 'You have an upcoming deadline for a major assignment. You start to doubt your ability to perform. The fear of receiving a poor grade becomes overwhelming, impacting your confidence and causing you to question your academic competence.'},
      {'feel_word': 'Comforting safety during campus alarm.', 'ScenarioText': "In a familiar classroom setting, you're seated next to a close friend for an on-campus tutorial. As the session progresses, the university conducts a scheduled safety alarm test, a fact you were briefed on beforehand. The sound of the alarm, rather than causing distress, instils in you a comforting sense of safety. This feeling is amplified by the familiarity of your surroundings and the presence of your friend."}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
    Routine Scenarios
    Routine Mapping
  LoopTerminator trials
