PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Lee test
  keyboardBackend = ioHub
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Routines
  Routine trial
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    ImageComponent target
      image = Images/base.png
      size = (1, 1)
      startVal [time (s)] = 0
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    MouseComponent mouse
      clickable = target
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        max_clicks = 500  # Adjust this number based on your experiment's needs
        clickList = []
        shapes = [visual.ShapeStim(win, vertices='circle', size=(0.01, 0.01), fillColor='white', autoDraw=False) for _ in range(max_clicks)]
      Each Frame:
        buttons = mouse.getPressed()
        if buttons[0]:  # Left click (buttons[0] is left, buttons[1] is middle, buttons[2] is right)
            x, y = mouse.getPos()
            for shape in shapes:
                if not shape.autoDraw:  # Find a shape that is not currently being drawn
                    shape.pos = (x, y)
                    shape.fillColor = 'red'  # Set the color for left click
                    shape.autoDraw = True  # Start drawing the shape
                    break  # Exit the loop after updating one shape
        elif buttons[2]:  # Right click
            x, y = mouse.getPos()
            for shape in shapes:
                if not shape.autoDraw:  # Find a shape that is not currently being drawn
                    shape.pos = (x, y)
                    shape.fillColor = 'purple'  # Set the color for right click
                    shape.autoDraw = True  # Start drawing the shape
                    break  # Exit the loop after updating one shape
    KeyboardComponent key_resp_body
      allowedKeys = 'space', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent lt_text_body
      color = black
      letterHeight = 0.025
      pos = (-0.33, -0.45)
      startVal [time (s)] = 0.0
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      text:
        for this body, color the regions
        whose activity you feel
        increasing or getting stronger
    TextComponent rt_text_body
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (+0.33, -0.45)
      startVal [time (s)] = 0.0
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      text:
        for this body, color the regions
        whose activity you feel
        decreasing or getting weaker
    TextComponent body_explanation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
    TextComponent body_progress
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
    PolygonComponent reset_rect
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent feeling_words
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text [set every repeat] = $feel_word
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  Routine Intro1
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    ImageComponent Intro_1
      image = Images/Intro1.png
      size = (1, 1)
      startVal [time (s)] = 0
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = nothing
      syncScreenRefresh = False
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  Routine Intro2
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    ImageComponent Intro_2
      image = Images/Intro2.png
      size = (1, 1)
      startVal [time (s)] = 0
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = nothing
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  Routine Intro3
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    ImageComponent Intro_3
      image = Images/Intro3.png
      size = (1, 1)
      startVal [time (s)] = 0
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space', 'enter'
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = nothing
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Flow
  Routine Intro1
  Routine Intro2
  Routine Intro3
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = feel_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'feel_word': 'Fearful'},
      {'feel_word': 'Safe'},
      {'feel_word': 'Anxious'},
      {'feel_word': 'Angry'},
      {'feel_word': 'Happy'},
      {'feel_word': 'Calm'},
      {'feel_word': 'Sad'},
      {'feel_word': 'Tired'},
      {'feel_word': 'Nervous'},
      {'feel_word': 'Agitated'}]
    Routine trial
  LoopTerminator trials
